###
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0070102']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL9750203466', 'http://identifiers.org/biomodels.db/BIOMD0000000151']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000759', 'http://identifiers.org/bto/BTO:0000575']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0007259', 'http://identifiers.org/go/GO:0000165', 'http://identifiers.org/kegg.pathway/mmu04010', 'http://identifiers.org/kegg.pathway/mmu04630']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@creatorEmail:'hdharuri@cds.caltechedu'
#@notes:'This is an atomized translation of an SBML model created on 04/10/2015. The original model has 68 molecules and 72 reactions. The translated model has 20 molecules and 72 rules'
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/12773095', 'http://identifiers.org/biomodels.db/BIOMD0000000094', 'http://identifiers.org/biomodels.db/BIOMD0000000093', 'http://identifiers.org/biomodels.db/BIOMD0000000019']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16752369']
#@creatorName:'Dharuri Harish'
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
###
begin model
begin parameters
	IL6 0.38
	kf0 0.1
	kr0 0.05
	kf1 0.1
	kr1 0.05
	kf2 0.02
	kr2 0.02
	kf3 0.04
	kr3 0.2
	k4 0.005
	k10 0.003
	kf5 0.008
	kr5 0.8
	k6 0.4
	kf7 0.005
	kr7 0.5
	kf9 0.001
	kr9 0.2
	kf21 0.02
	kr21 0.1
	kf37 0.3
	kr37 0.0009
	kf39 0.3
	kr39 0.0009
	kf32 0.1
	kr32 0.000245
	k12 0.003
	kf13 2e-07
	kr13 0.2
	k17 0.05
	kf8 0.02
	kr8 0.1
	kf11 0.001
	kr11 0.2
	k14 0.005
	Vm 1.7
	Km 340.0
	kf34 6.0
	kr34 0.06
	kf60 0.5
	kr60 0.005
	kf15 0.001
	kr15 0.2
	kf61 0.2
	kr61 2e-07
	k16 0.005
	k18a 0.01
	k18b 400.0
	k19 0.001
	k22 0.0005
	k20 0.01
	k23 0.0005
	kf38 0.01
	kr38 0.55
	kf35 0.0015
	kr35 0.0045
	kf24 0.01
	kr24 0.55
	kf25 0.01
	kr25 0.0214
	kf40 0.03
	kr40 0.064
	kf26 0.015
	kr26 1.3
	kf31 0.023
	kr31 0.00022
	kf27 0.5
	kr27 0.0001
	kf28 0.001
	kr28 0.0053
	kf41 0.03
	kr41 0.0429
	kf33 0.3
	kr33 0.021
	kf30 0.0079
	kr30 0.4
	k43 1.0
	kf29 1.0
	kr29 0.0007
	kf42 0.0717
	kr42 0.2
	kf44 0.011
	kr44 0.001833
	k45 3.5
	kf46 0.011
	kr46 0.001833
	k51 0.058
	k49 0.058
	kf50 0.00025
	kr50 0.5
	k47 2.9
	kf48 0.0143
	kr48 0.8
	kf52 0.00011
	kr52 0.033
	k53 16.0
	kr54 0.033
	kf54 0.00011
	k55 6.7
	k59 0.3
	k57 0.27
	kf58 0.005
	kr58 0.5
	kf56 0.014
	kr56 0.6
end parameters
begin compartments
	cytosol  3  1.0
	nucleus  3  1.0
	cell 3 1.0
end compartments
begin molecule types
	gp80(gp130,gp80,il6)
	SHP2(astmod~AST~0,grb2,jak)
	SOCS3(jak)
	PP1(stat3)
	PP2(stat3)
	Grb2(shp2,sos)
	Raf(astmod~AST~0,mek,phosp1,ras)
	Phosp1(raf)
	MEK(Pmod~P~0,_Pmod~_P~0,erk,phosp2,raf)
	Phosp2(mek)
	ERK(Pmod~P~0,_Pmod~_P~0,mek,phosp3)
	SOS(grb2)
	gp130(gp80,jak)
	JAK(JAK_astmod~JAK_ast~0,astmod~0~ast,gp130,ras,shp2,socs3,stat3)
	Phosp3(erk)
	STAT3(Cmod~0~C,Nmod~0~N,ast2mod~AST~0,astmod~AST~0,jak,pp1,pp2,stat3)
	GTP(astmod~AST~0)
	Mrna(_SOCS3Cmod~_SOCS3C~0,_SOCS3Nmod~_SOCS3N~0)
	IL6(gp80)
	Ras(Ras_GDPmod~Ras_GDP~0,Ras_GTPmod~Ras_GTP~0,astmod~AST~0,jak,raf)
end molecule types
begin seed species
	@cytosol:$gp80(gp130,gp80,il6) 8.0 #gp80 #x1
	@cytosol:SHP2(astmod~0,grb2,jak)@cytosol 100.0 #SHP2 #x15
	@cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol 1000.0 #STAT3C #x9
	@cytosol:PP1(stat3)@cytosol 50.0 #PP1 #x17
	@nucleus:PP2(stat3)@nucleus 60.0 #PP2 #x23
	@cytosol:Grb2(shp2,sos)@cytosol 85.0 #Grb2 #x34
	@cytosol:Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak,raf)@cytosol 19000.0 #Ras_GDP #x36
	@cytosol:Raf(astmod~0,mek,phosp1,ras)@cytosol 67.0 #Raf #x47
	@cytosol:Phosp1(raf)@cytosol 67.0 #Phosp1 #x50
	@cytosol:MEK(Pmod~0,_Pmod~0,erk,phosp2,raf)@cytosol 41667.0 #MEK #x53
	@cytosol:Phosp2(mek)@cytosol 67.0 #Phosp2 #x59
	@cytosol:ERK(Pmod~0,_Pmod~0,mek,phosp3)@cytosol 35000.0 #ERK #x61
	@cytosol:SOS(grb2)@cytosol 34.0 #SOS #x35
	@cytosol:$gp130(gp80,jak) 0.8 #gp130 #x3
	@cytosol:JAK(JAK_astmod~0,astmod~0,gp130,ras,shp2,socs3,stat3)@cytosol 12.0 #JAK #x4
	@cytosol:Phosp3(erk)@cytosol 16667.0 #Phosp3 #x66
end seed species
begin observables
	Species gp80_cytosol @cytosol:gp80(gp130,gp80,il6) #gp80
	Species IL6_gp80_cytosol @cytosol:gp80(gp130,gp80,il6!0)@cytosol.IL6(gp80!0)@cytosol #IL6-gp80
	Species IL6_gp80_gp130_JAK_cytosol @cytosol:JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80,il6!0)@cytosol.gp130(gp80!13,jak!2)@cytosol.IL6(gp80!0)@cytosol #IL6-gp80-gp130-JAK
	Species gp130_JAK_cytosol @cytosol:JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp130(gp80,jak!2)@cytosol #gp130-JAK
	Species __IL6_gp80_gp130_JAK__2_cytosol @cytosol:JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)2
	Species __IL6_gp80_gp130_JAK___ast2_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)_ast2
	Species __IL6_gp80_gp130_JAK__ast2_JAK_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-JAK
	Species SHP2_cytosol @cytosol:SHP2(astmod~0,grb2,jak)@cytosol #SHP2
	Species STAT3C_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol #STAT3C
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C
	Species STAT3Cast_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@cytosol #STAT3Cast
	Species __IL6_gp80_gp130_JAK__ast2_STAT3Cast_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3Cast
	Species SOCS3_cytosol @cytosol:SOCS3(jak)@cytosol #SOCS3
	Species __IL6_gp80_gp130_JAK__ast2_SOCS3_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3!19,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol #(IL6-gp80-gp130-JAK)ast2-SOCS3
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~AST,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast
	Species SHP2ast_cytosol @cytosol:SHP2(astmod~AST,grb2,jak)@cytosol #SHP2ast
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.Grb2(shp2!5,sos)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast-Grb2
	Species SHP2ast_Grb2_cytosol @cytosol:SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos)@cytosol #SHP2ast-Grb2
	Species __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2-Grb2
	Species SHP2ast_Grb2_SOS_cytosol @cytosol:SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos!1)@cytosol.SOS(grb2!1)@cytosol #SHP2ast-Grb2-SOS
	Species PP1_STAT3Cast_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1!11,pp2,stat3)@cytosol.PP1(stat3!11)@cytosol #PP1-STAT3Cast
	Species PP1_cytosol @cytosol:PP1(stat3)@cytosol #PP1
	Species STAT3C_STAT3Cast_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol #STAT3C-STAT3Cast
	Species STAT3N_nucleus @nucleus:STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@nucleus #STAT3N
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C-SOCS3-SHP2
	Species STAT3Cast_STAT3Cast_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~AST,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol #STAT3Cast-STAT3Cast
	Species STAT3Nast_STAT3Nast_nucleus @nucleus:STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus #STAT3Nast-STAT3Nast
	Species STAT3Nast_nucleus @nucleus:STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@nucleus #STAT3Nast
	Species PP2_nucleus @nucleus:PP2(stat3)@nucleus #PP2
	Species PP2_STAT3Nast_STAT3Nast_nucleus @nucleus:STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2!10,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.PP2(stat3!10)@nucleus #PP2-STAT3Nast-STAT3Nast
	Species STAT3N_STAT3Nast_nucleus @nucleus:STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus #STAT3N-STAT3Nast
	Species Mrna_SOCS3N_nucleus @nucleus:Mrna(_SOCS3Cmod~0,_SOCS3Nmod~_SOCS3N)@nucleus #Mrna-SOCS3N
	Species Grb2_cytosol @cytosol:Grb2(shp2,sos)@cytosol #Grb2
	Species Ras_GDP_cytosol @cytosol:Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak,raf)@cytosol #Ras-GDP
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GDP_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras!21,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak!21,raf)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast-Grb2-SOS-Ras-GDP
	Species Ras_GTP_cytosol @cytosol:Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak,raf)@cytosol #Ras-GTP
	Species Raf_cytosol @cytosol:Raf(astmod~0,mek,phosp1,ras)@cytosol #Raf
	Species Raf_Ras_GTP_cytosol @cytosol:Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak,raf!4)@cytosol.Raf(astmod~0,mek,phosp1,ras!4)@cytosol #Raf-Ras-GTP
	Species Rafast_Phosp1_cytosol @cytosol:Raf(astmod~AST,mek,phosp1!8,ras)@cytosol.Phosp1(raf!8)@cytosol #Rafast-Phosp1
	Species Rafast_cytosol @cytosol:Raf(astmod~AST,mek,phosp1,ras)@cytosol #Rafast
	Species Phosp1_cytosol @cytosol:Phosp1(raf)@cytosol #Phosp1
	Species MEK_cytosol @cytosol:MEK(Pmod~0,_Pmod~0,erk,phosp2,raf)@cytosol #MEK
	Species MEK_Rafast_cytosol @cytosol:MEK(Pmod~0,_Pmod~0,erk,phosp2,raf!3)@cytosol.Raf(astmod~AST,mek!3,phosp1,ras)@cytosol #MEK-Rafast
	Species MEK_P_cytosol @cytosol:MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf)@cytosol #MEK-P
	Species MEK_P_Phosp2_cytosol @cytosol:MEK(Pmod~0,_Pmod~_P,erk,phosp2!7,raf)@cytosol.Phosp2(mek!7)@cytosol #MEK-P-Phosp2
	Species Phosp2_cytosol @cytosol:Phosp2(mek)@cytosol #Phosp2
	Species MEK_PP_cytosol @cytosol:MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol #MEK-PP
	Species ERK_cytosol @cytosol:ERK(Pmod~0,_Pmod~0,mek,phosp3)@cytosol #ERK
	Species ERK_MEK_PP_cytosol @cytosol:MEK(Pmod~P,_Pmod~_P,erk!9,phosp2,raf)@cytosol.ERK(Pmod~0,_Pmod~0,mek!9,phosp3)@cytosol #ERK-MEK-PP
	Species ERK_P_cytosol @cytosol:ERK(Pmod~0,_Pmod~_P,mek,phosp3)@cytosol #ERK-P
	Species ERK_PP_cytosol @cytosol:ERK(Pmod~P,_Pmod~_P,mek,phosp3)@cytosol #ERK-PP
	Species ERK_P_Phosp3_cytosol @cytosol:ERK(Pmod~0,_Pmod~_P,mek,phosp3!6)@cytosol.Phosp3(erk!6)@cytosol #ERK-P-Phosp3
	Species SOS_cytosol @cytosol:SOS(grb2)@cytosol #SOS
	Species PP2_STAT3Nast_nucleus @nucleus:STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2!10,stat3)@nucleus.PP2(stat3!10)@nucleus #PP2-STAT3Nast
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C-SOCS3
	Species MEK_P_Rafast_cytosol @cytosol:MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf!3)@cytosol.Raf(astmod~AST,mek!3,phosp1,ras)@cytosol #MEK-P-Rafast
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GTP_cytosol @cytosol:JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras!21,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak!21,raf)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast-Grb2-SOS-Ras-GTP
	Species gp130_cytosol @cytosol:gp130(gp80,jak) #gp130
	Species MEK_PP_Phosp2_cytosol @cytosol:MEK(Pmod~P,_Pmod~_P,erk,phosp2!7,raf)@cytosol.Phosp2(mek!7)@cytosol #MEK-PP-Phosp2
	Species JAK_cytosol @cytosol:JAK(JAK_astmod~0,astmod~0,gp130,ras,shp2,socs3,stat3)@cytosol #JAK
	Species Mrna_SOCS3C_nucleus @nucleus:Mrna(_SOCS3Cmod~_SOCS3C,_SOCS3Nmod~0)@nucleus #Mrna-SOCS3C
	Species Ras_GTPast_cytosol @cytosol:Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~AST,jak,raf)@cytosol #Ras-GTPast
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C-SHP2
	Species ERK_P_MEK_PP_cytosol @cytosol:MEK(Pmod~P,_Pmod~_P,erk!9,phosp2,raf)@cytosol.ERK(Pmod~0,_Pmod~_P,mek!9,phosp3)@cytosol #ERK-P-MEK-PP
	Species PP1_STAT3Cast_STAT3Cast_cytosol @cytosol:STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1!11,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol.PP1(stat3!11)@cytosol #PP1-STAT3Cast-STAT3Cast
	Species Grb2_SOS_cytosol @cytosol:Grb2(shp2,sos!1)@cytosol.SOS(grb2!1)@cytosol #Grb2-SOS
	Species Phosp3_cytosol @cytosol:Phosp3(erk)@cytosol #Phosp3
	Species ERK_PP_Phosp3_cytosol @cytosol:ERK(Pmod~P,_Pmod~_P,mek,phosp3!6)@cytosol.Phosp3(erk!6)@cytosol #ERK-PP-Phosp3
end observables
begin functions
	functionRate0() = kf0 * gp80_cytosol * IL6
	functionRate2() = if(IL6_gp80_gp130_JAK_cytosol>0, kr2 * IL6_gp80_gp130_JAK_cytosol -kf2 * IL6_gp80_cytosol * gp130_JAK_cytosol/IL6_gp80_gp130_JAK_cytosol,0)
	functionRate3() = if(JAK_cytosol>0, kf1 * gp130_cytosol * JAK_cytosol -kr1 * gp130_JAK_cytosol/JAK_cytosol,0)
	functionRate4() = if(IL6_gp80_gp130_JAK_cytosol>0,kf3*((IL6_gp80_gp130_JAK_cytosol) ^ (2))/(IL6_gp80_gp130_JAK_cytosol^2),0)*2
	functionRate8() = if(STAT3C_cytosol>0, if(__IL6_gp80_gp130_JAK___ast2_cytosol>0, kf5 * __IL6_gp80_gp130_JAK___ast2_cytosol * STAT3C_cytosol -kr5 * __IL6_gp80_gp130_JAK__ast2_STAT3C_cytosol/__IL6_gp80_gp130_JAK___ast2_cytosol,0)/STAT3C_cytosol,0)
	functionRate21() = if(STAT3Cast_cytosol>0,2*kf8*((STAT3Cast_cytosol) ^ (2))/STAT3Cast_cytosol,0)
	functionRate21m() = 2 * kr8 * STAT3Cast_STAT3Cast_cytosol * 0
	functionRate26() = if(SHP2_cytosol>0, if(__IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_cytosol>0, kf9 * SHP2_cytosol * __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_cytosol -kr9 * __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2_cytosol/__IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_cytosol,0)/SHP2_cytosol,0)
	functionRate27() = Vm / (Km + SHP2ast_cytosol)
	functionRate29m() = if(STAT3Nast_nucleus>0,kf8*((STAT3Nast_nucleus) ^ (2))/(STAT3Nast_nucleus^2),0)*2
	functionRate35() = k18a * STAT3Nast_STAT3Nast_nucleus / (k18b + STAT3Nast_STAT3Nast_nucleus)
	functionRate38() = k20 * Mrna_SOCS3C_nucleus
end functions
begin reaction rules
	R1: 0  -> gp80(gp130,gp80,il6!0)@cytosol.IL6(gp80!0)@cytosol functionRate0() #Modifiers(x1)
	R2: gp80(gp130,gp80,il6!0)@cytosol.IL6(gp80!0)@cytosol -> 0  kr0
	R3: JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80,il6!0)@cytosol.gp130(gp80!13,jak!2)@cytosol.IL6(gp80!0)@cytosol -> JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp130(gp80,jak!2)@cytosol + gp80(gp130,gp80,il6!0)@cytosol.IL6(gp80!0)@cytosol functionRate2()
	R5: JAK(JAK_astmod~0,astmod~0,gp130,ras,shp2,socs3,stat3)@cytosol -> JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp130(gp80,jak!2)@cytosol functionRate3() #Modifiers(x3)
	R7: JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80,il6!0)@cytosol.gp130(gp80!13,jak!2)@cytosol.IL6(gp80!0)@cytosol + JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80,il6!0)@cytosol.gp130(gp80!13,jak!2)@cytosol.IL6(gp80!0)@cytosol -> JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol functionRate4()
	R8: JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol -> JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80,il6!0)@cytosol.gp130(gp80!13,jak!2)@cytosol.IL6(gp80!0)@cytosol + JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80,il6!0)@cytosol.gp130(gp80!13,jak!2)@cytosol.IL6(gp80!0)@cytosol kr3
	R9: JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol -> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol (k4)/2
	R10: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol -> SHP2(astmod~0,grb2,jak)@cytosol + JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol k10
	R11: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol -> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol functionRate8()
	R12: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol -> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol k6
	R13: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol <-> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf7,kr7
	R14: SHP2(astmod~0,grb2,jak)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf9,kr9
	R15: SOCS3(jak)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3!19,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol kf21,kr21
	R16: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~AST,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol <-> SHP2(astmod~AST,grb2,jak)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf37,kr37
	R16a: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.Grb2(shp2!5,sos)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol <-> SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf39,kr39
	R17: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol <-> SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos!1)@cytosol.SOS(grb2!1)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf32,kr32
	R18: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1!11,pp2,stat3)@cytosol.PP1(stat3!11)@cytosol -> PP1(stat3)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol k12
	R19: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol <-> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol kf13,kr13
	R20: STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@nucleus -> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol k17
	R21: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3!19,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol <-> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol kf5,kr5
	R22: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol -> SOCS3(jak)@cytosol + SHP2(astmod~0,grb2,jak)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@cytosol + JAK(JAK_astmod~0,astmod~0,gp130!2,ras,shp2,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol k10
	R23: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@cytosol <-> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~AST,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol functionRate21(),functionRate21m()
	R24: PP1(stat3)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@cytosol <-> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1!11,pp2,stat3)@cytosol.PP1(stat3!11)@cytosol kf11,kr11
	R25: PP1(stat3)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~AST,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol <-> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1!11,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol.PP1(stat3!11)@cytosol (kf11)/2,(kr11)/2
	R26: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~AST,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol -> STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus k14
	R27: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1!11,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol.PP1(stat3!11)@cytosol -> PP1(stat3)@cytosol + STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@cytosol.STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@cytosol (k12)/2
	R28: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol + SHP2(astmod~0,grb2,jak)@cytosol -> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol functionRate26()
	R29: SHP2(astmod~AST,grb2,jak)@cytosol -> SHP2(astmod~0,grb2,jak)@cytosol functionRate27()
	R30: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~AST,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf34,kr34
	R31: STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus <-> STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@nucleus + STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@nucleus kr8,functionRate29m()
	R32: PP2(stat3)@nucleus + STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus <-> STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2!10,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.PP2(stat3!10)@nucleus (kf15)/2,kr15
	R33: PP2(stat3)@nucleus + STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@nucleus <-> STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2!10,stat3)@nucleus.PP2(stat3!10)@nucleus kf15,kr15
	R34: STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus <-> STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@nucleus + STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3)@nucleus kr13,kf13
	R35: STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2!10,stat3)@nucleus.PP2(stat3!10)@nucleus -> PP2(stat3)@nucleus + STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3)@nucleus k16
	R36: STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2!10,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus.PP2(stat3!10)@nucleus -> STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~0,jak,pp1,pp2,stat3!12)@nucleus.STAT3(Cmod~0,Nmod~N,ast2mod~0,astmod~AST,jak,pp1,pp2,stat3!12)@nucleus + PP2(stat3)@nucleus (k16)/2
	R37: 0  -> Mrna(_SOCS3Cmod~0,_SOCS3Nmod~_SOCS3N)@nucleus functionRate35() #Modifiers(x20)
	R38: Mrna(_SOCS3Cmod~0,_SOCS3Nmod~_SOCS3N)@nucleus -> Mrna(_SOCS3Cmod~_SOCS3C,_SOCS3Nmod~0)@nucleus k19
	R39: Mrna(_SOCS3Cmod~_SOCS3C,_SOCS3Nmod~0)@nucleus -> 0  k22
	R40: 0  -> SOCS3(jak)@cytosol functionRate38() #Modifiers(x26)
	R41: SOCS3(jak)@cytosol -> 0  k23
	R42: STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3!19,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol.SOCS3(jak!19)@cytosol -> STAT3(Cmod~C,Nmod~0,ast2mod~0,astmod~0,jak!20,pp1,pp2,stat3)@cytosol.JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3!20)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~0,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol + SOCS3(jak)@cytosol k23
	R43: SHP2(astmod~AST,grb2,jak)@cytosol + Grb2(shp2,sos)@cytosol <-> SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos)@cytosol kf38,kr38
	R44: Grb2(shp2,sos!1)@cytosol.SOS(grb2!1)@cytosol <-> SOS(grb2)@cytosol + Grb2(shp2,sos)@cytosol kf35,kr35
	R45: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~AST,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol + Grb2(shp2,sos)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.Grb2(shp2!5,sos)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol kf24,kr24
	R46: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.gp130(gp80!13,jak!2)@cytosol.Grb2(shp2!5,sos)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol + SOS(grb2)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol kf25,kr25
	R47: SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos)@cytosol + SOS(grb2)@cytosol <-> SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos!1)@cytosol.SOS(grb2!1)@cytosol kf40,kr40
	R48: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol + Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak,raf)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras!21,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak!21,raf)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol kf26,kr26
	R49: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras!21,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak!21,raf)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol + Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak,raf)@cytosol kf31,kr31
	R50: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras!21,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,astmod~0,jak!21,raf)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak,raf)@cytosol kf27,kr27
	R51: Raf(astmod~0,mek,phosp1,ras)@cytosol + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak,raf)@cytosol <-> Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak,raf!4)@cytosol.Raf(astmod~0,mek,phosp1,ras!4)@cytosol kf28,kr28
	R52: JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.SHP2(astmod~AST,grb2,jak!18)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.IL6(gp80!17)@cytosol + Grb2(shp2,sos!1)@cytosol.SOS(grb2!1)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol kf41,kr41
	R53: SHP2(astmod~AST,grb2!5,jak)@cytosol.Grb2(shp2!5,sos!1)@cytosol.SOS(grb2!1)@cytosol <-> SHP2(astmod~AST,grb2,jak)@cytosol + Grb2(shp2,sos!1)@cytosol.SOS(grb2!1)@cytosol kf33,kr33
	R54: Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~AST,jak,raf)@cytosol + JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol <-> JAK(JAK_astmod~JAK_ast,astmod~0,gp130!2,ras!21,shp2!18,socs3,stat3)@cytosol.JAK(JAK_astmod~0,astmod~0,gp130!14,ras,shp2,socs3,stat3)@cytosol.Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak!21,raf)@cytosol.gp80(gp130!13,gp80!15,il6!0)@cytosol.SHP2(astmod~AST,grb2!5,jak!18)@cytosol.gp80(gp130!16,gp80!15,il6!17)@cytosol.Grb2(shp2!5,sos!1)@cytosol.gp130(gp80!13,jak!2)@cytosol.gp130(gp80!16,jak!14)@cytosol.IL6(gp80!0)@cytosol.SOS(grb2!1)@cytosol.IL6(gp80!17)@cytosol kf30,kr30
	R55: Raf(astmod~AST,mek,phosp1!8,ras)@cytosol.Phosp1(raf!8)@cytosol -> Raf(astmod~0,mek,phosp1,ras)@cytosol + Phosp1(raf)@cytosol k43
	R56: Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~0,jak,raf!4)@cytosol.Raf(astmod~0,mek,phosp1,ras!4)@cytosol <-> Raf(astmod~AST,mek,phosp1,ras)@cytosol + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,astmod~AST,jak,raf)@cytosol kf29,kr29
	R57: Raf(astmod~AST,mek,phosp1,ras)@cytosol + Phosp1(raf)@cytosol <-> Raf(astmod~AST,mek,phosp1!8,ras)@cytosol.Phosp1(raf!8)@cytosol kf42,kr42
	R58: MEK(Pmod~0,_Pmod~0,erk,phosp2,raf)@cytosol + Raf(astmod~AST,mek,phosp1,ras)@cytosol <-> MEK(Pmod~0,_Pmod~0,erk,phosp2,raf!3)@cytosol.Raf(astmod~AST,mek!3,phosp1,ras)@cytosol kf44,kr44
	R59: MEK(Pmod~0,_Pmod~0,erk,phosp2,raf!3)@cytosol.Raf(astmod~AST,mek!3,phosp1,ras)@cytosol -> MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf)@cytosol + Raf(astmod~AST,mek,phosp1,ras)@cytosol k45
	R60: MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf)@cytosol + Raf(astmod~AST,mek,phosp1,ras)@cytosol <-> MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf!3)@cytosol.Raf(astmod~AST,mek!3,phosp1,ras)@cytosol kf46,kr46
	R61: MEK(Pmod~0,_Pmod~_P,erk,phosp2!7,raf)@cytosol.Phosp2(mek!7)@cytosol -> Phosp2(mek)@cytosol + MEK(Pmod~0,_Pmod~0,erk,phosp2,raf)@cytosol k51
	R62: MEK(Pmod~P,_Pmod~_P,erk,phosp2!7,raf)@cytosol.Phosp2(mek!7)@cytosol -> Phosp2(mek)@cytosol + MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf)@cytosol k49
	R63: Phosp2(mek)@cytosol + MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf)@cytosol <-> MEK(Pmod~0,_Pmod~_P,erk,phosp2!7,raf)@cytosol.Phosp2(mek!7)@cytosol kf50,kr50
	R64: MEK(Pmod~0,_Pmod~_P,erk,phosp2,raf!3)@cytosol.Raf(astmod~AST,mek!3,phosp1,ras)@cytosol -> Raf(astmod~AST,mek,phosp1,ras)@cytosol + MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol k47
	R65: Phosp2(mek)@cytosol + MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol <-> MEK(Pmod~P,_Pmod~_P,erk,phosp2!7,raf)@cytosol.Phosp2(mek!7)@cytosol kf48,kr48
	R66: ERK(Pmod~0,_Pmod~0,mek,phosp3)@cytosol + MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol <-> MEK(Pmod~P,_Pmod~_P,erk!9,phosp2,raf)@cytosol.ERK(Pmod~0,_Pmod~0,mek!9,phosp3)@cytosol kf52,kr52
	R67: MEK(Pmod~P,_Pmod~_P,erk!9,phosp2,raf)@cytosol.ERK(Pmod~0,_Pmod~0,mek!9,phosp3)@cytosol -> ERK(Pmod~0,_Pmod~_P,mek,phosp3)@cytosol + MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol k53
	R68: MEK(Pmod~P,_Pmod~_P,erk!9,phosp2,raf)@cytosol.ERK(Pmod~0,_Pmod~_P,mek!9,phosp3)@cytosol <-> ERK(Pmod~0,_Pmod~_P,mek,phosp3)@cytosol + MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol kr54,kf54
	R69: MEK(Pmod~P,_Pmod~_P,erk!9,phosp2,raf)@cytosol.ERK(Pmod~0,_Pmod~_P,mek!9,phosp3)@cytosol -> ERK(Pmod~P,_Pmod~_P,mek,phosp3)@cytosol + MEK(Pmod~P,_Pmod~_P,erk,phosp2,raf)@cytosol k55
	R70: ERK(Pmod~0,_Pmod~_P,mek,phosp3!6)@cytosol.Phosp3(erk!6)@cytosol -> Phosp3(erk)@cytosol + ERK(Pmod~0,_Pmod~0,mek,phosp3)@cytosol k59
	R71: ERK(Pmod~P,_Pmod~_P,mek,phosp3!6)@cytosol.Phosp3(erk!6)@cytosol -> Phosp3(erk)@cytosol + ERK(Pmod~0,_Pmod~_P,mek,phosp3)@cytosol k57
	R72: Phosp3(erk)@cytosol + ERK(Pmod~0,_Pmod~_P,mek,phosp3)@cytosol <-> ERK(Pmod~0,_Pmod~_P,mek,phosp3!6)@cytosol.Phosp3(erk!6)@cytosol kf58,kr58
	R73: Phosp3(erk)@cytosol + ERK(Pmod~P,_Pmod~_P,mek,phosp3)@cytosol <-> ERK(Pmod~P,_Pmod~_P,mek,phosp3!6)@cytosol.Phosp3(erk!6)@cytosol kf56,kr56
end reaction rules
end model
