###
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007173', 'http://identifiers.org/go/GO:0006897']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000205', 'http://identifiers.org/biomodels.db/MODEL7802538336']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/hsa04070', 'http://identifiers.org/kegg.pathway/hsa04010']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@notes:'This is an atomized translation of an SBML model created on 03/10/2015. The original model has 194 molecules and 205 reactions. The translated model has 40 molecules and 205 rules'
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000048', 'http://identifiers.org/biomodels.db/BIOMD0000000049', 'http://identifiers.org/pubmed/16687399', 'http://identifiers.org/pubmed/14751248', 'http://identifiers.org/pubmed/11024454', 'http://identifiers.org/biomodels.db/BIOMD0000000019']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18505685']
#@creatorName:'Dharuri Harish'
###
begin model
begin parameters
	r1_k1 100.000000
	r1_k2 0.003800
	r2_k1 10.000000
	r2_k2 0.020000
	r3_k1 2.014000
	r4_k1 3.140000
	r4_k2 0.200000
	r5_k1 0.266100
	r6_k1 90.000000
	r6_k2 0.600000
	r7_k1 0.583800
	r8_k1 4.481000
	r8_k2 0.300000
	r9_k1 3.114000
	r9_k2 0.200000
	r10_k1 0.266100
	r11_k1 3.000000
	r11_k2 0.100000
	r12_k1 10.000000
	r12_k2 0.021400
	r13_k1 0.100000
	r13_k2 0.001500
	r14_k1 10.000000
	r14_k2 0.045000
	r15_k1 202.900000
	r15_k2 0.180000
	r16_k1 0.143400
	r17_k1 3.000000
	r17_k2 0.050000
	r18_k1 10.000000
	r18_k2 0.060000
	r19_k1 2.734000
	r19_k2 0.025000
	r20_k1 202.900000
	r20_k2 0.180000
	r21_k1 0.143400
	r22_k1 1.754000
	r22_k2 0.050000
	r23_k1 0.762400
	r24_k1 4.000000
	r24_k2 0.018330
	r25_k1 3.500000
	r26_k1 4.000000
	r26_k2 0.018330
	r27_k1 2.900000
	r28_k1 3.000000
	r28_k2 0.033000
	r29_k1 16.000000
	r30_k1 3.000000
	r30_k2 0.033000
	r31_k1 5.700000
	r32_k1 71.700000
	r32_k2 0.200000
	r33_k1 1.000000
	r34_k1 14.300000
	r34_k2 0.800000
	r35_k1 0.058000
	r36_k1 0.250000
	r36_k2 0.500000
	r37_k1 0.058000
	r38_k1 7.000000
	r38_k2 0.600000
	r39_k1 0.270000
	r40_k1 5.000000
	r40_k2 0.500000
	r41_k1 0.300000
	r42_k1 0.000017
	r43_k1 2.854000
	r43_k2 0.960000
	r44_k1 7.600000
	r45_k1 8.898000
	r45_k2 0.100000
	r46_k1 0.426000
	r47_k1 8.898000
	r47_k2 0.100000
	r48_k1 0.426000
	r49_k1 0.002000
	r50_k1 14.000000
	r50_k2 0.174300
	r51_k1 33.720000
	r52_k1 1.000000
	r52_k2 0.038000
	r53_k1 0.595000
	r54_k1 25.000000
	r54_k2 3.500000
	r55_k1 25.000000
	r56_k1 3.000000
	r56_k2 1.000000
	r57_k1 3.000000
	r57_k2 1.000000
	r58_k1 3.000000
	r59_k1 0.001000
	r59_k2 10.000000
	r60_k1 1.000000
	r60_k2 0.900000
	r61_k1 0.001000
	r62_k1 3.000000
	r62_k2 0.500000
	r63_k1 3.000000
	r64_k1 0.001000
	r65_k1 1.100000
	r65_k2 0.033000
	r66_k1 16.000000
	r67_k1 5.000000
	r67_k2 0.500000
	r68_k1 5.000000
	r69_k1 0.129800
	r70_k1 17.000000
	r71_k1 10.000000
	r71_k2 0.021400
	r72_k1 2.029000
	r72_k2 0.180000
	r73_k1 0.143400
	r74_k1 2.845000
	r74_k2 0.960000
	r75_k1 0.262000
	r76_k1 2.845000
	r76_k2 0.960000
	r77_k1 1.205000
	r78_k1 20.290000
	r78_k2 0.180000
	r79_k1 20.290000
	r79_k2 0.180000
	r80_k1 4.980000
	r81_k1 0.262000
	r82_k1 0.100000
	r82_k2 0.010000
	r83_k1 2.854000
	r83_k2 0.960000
	r84_k1 7.760000
	r85_k1 10.000000
	r85_k2 1.000000
	r86_k1 10.000000
	r86_k2 1.000000
	r87_k1 2.661000
	r88_k1 2.661000
	r89_k1 3.114000
	r89_k2 0.200000
	r90_k1 2.661000
	r91_k1 3.114000
	r91_k2 0.200000
	r92_k1 2.661000
	r93_k1 3.114000
	r93_k2 0.200000
	r94_k1 2.661000
	r95_k1 3.114000
	r95_k2 0.200000
	r96_k1 2.661000
	r97_k1 3.114000
	r97_k2 0.200000
	r98_k1 2.661000
	r99_k1 40.000000
	r99_k2 0.935600
	r100_k1 10.000000
	r101_k1 0.129800
	r102_k1 40.000000
	r102_k2 0.935600
	r103_k1 10.000000
	r104_k1 2.845000
	r104_k2 0.960000
	r105_k1 1.205000
	r106_k1 1.754000
	r106_k2 0.500000
	r107_k1 7.624000
	r108_k1 40.000000
	r108_k2 0.935600
	r109_k1 40.000000
	r110_k1 0.001000
	r110_k2 0.000330
	r111_k1 1.000000
	r111_k2 1.000000
	r112_k1 0.010000
	r113_k1 0.100000
	r113_k2 1.298700
	r114_k1 0.500000
	r114_k2 0.005000
	r115_k1 0.500000
	r115_k2 0.005000
	r116_k1 5.000000
	r116_k2 0.010000
	r117_k1 5.000000
	r117_k2 0.010000
	r118_k1 0.001000
	r119_k1 0.001000
	r120_k1 0.005000
	r121_k1 1.100000
	r121_k2 0.033000
	r122_k1 16.000000
	r123_k1 10.000000
	r123_k2 0.005000
	r124_k1 129.800000
	r125_k1 1.754000
	r125_k2 0.050000
	r126_k1 0.076240
	r127_k1 8.898000
	r127_k2 1.000000
	r128_k1 0.426000
	r129_k1 3.000000
	r129_k2 0.050000
	r130_k1 3.000000
	r130_k2 0.100000
	r131_k1 3.000000
	r131_k2 0.500000
	r132_k1 5.000000
	r132_k2 1.670000
	r133_k1 1.693000
	r134_k1 1.693000
	r135_k1 1.670000
	r135_k2 5.000000
	r136_k1 5.000000
	r136_k2 1.670000
	r137_k1 1.693000
	r138_k1 1.693000
	r139_k1 1.670000
	r139_k2 5.000000
	r140_k1 1.667000
	r140_k2 0.500000
	r141_k1 5.000000
	r141_k2 1.670000
	r142_k1 1.693000
	r143_k1 1.693000
	r144_k1 1.670000
	r144_k2 5.000000
	r145_k1 1.667000
	r145_k2 0.500000
	r146_k1 5.000000
	r146_k2 1.670000
	r147_k1 1.693000
	r148_k1 1.693000
	r149_k1 1.670000
	r149_k2 5.000000
	r150_k1 1.667000
	r150_k2 0.500000
	r151_k1 5.000000
	r151_k2 1.670000
	r152_k1 1.693000
	r153_k1 1.693000
	r154_k1 1.670000
	r154_k2 5.000000
	r155_k1 1.667000
	r155_k2 0.500000
	r156_k1 5.000000
	r156_k2 1.670000
	r157_k1 1.693000
	r158_k1 1.693000
	r159_k1 1.670000
	r159_k2 5.000000
	r160_k1 5.000000
	r160_k2 1.670000
	r161_k1 0.100200
	r162_k1 0.100200
	r163_k1 1.670000
	r164_k1 5.000000
	r164_k2 1.670000
	r165_k1 0.100200
	r166_k1 0.100200
	r167_k1 1.670000
	r168_k1 1.667000
	r168_k2 0.500000
	r169_k1 5.000000
	r169_k2 1.670000
	r170_k1 1.693000
	r171_k1 1.693000
	r172_k1 1.670000
	r172_k2 5.000000
	r173_k1 1.667000
	r173_k2 0.500000
	r174_k1 5.000000
	r174_k2 1.670000
	r175_k1 1.693000
	r176_k1 1.693000
	r177_k1 1.670000
	r177_k2 5.000000
	r178_k1 16.670000
	r178_k2 0.050000
	r179_k1 16.670000
	r179_k2 0.050000
	r180_k1 16.670000
	r180_k2 0.050000
	r181_k1 16.670000
	r181_k2 0.050000
	r182_k1 5.000000
	r182_k2 1.670000
	r183_k1 0.100200
	r184_k1 0.100200
	r185_k1 1.670000
	r186_k1 5.000000
	r186_k2 1.670000
	r187_k1 0.100200
	r188_k1 0.100200
	r189_k1 1.670000
	r190_k1 5.000000
	r190_k2 1.670000
	r191_k1 0.100200
	r192_k1 0.100200
	r193_k1 1.670000
	r194_k1 5.000000
	r194_k2 1.670000
	r195_k1 0.100200
	r196_k1 0.100200
	r197_k1 1.670000
	r198_k1 1.667000
	r198_k2 0.500000
	r199_k1 1.205000
	r200_k1 1.667000
	r200_k2 0.500000
	r201_k1 1.205000
	r202_k1 1.667000
	r202_k2 0.500000
	r203_k1 1.205000
	r204_k1 1.667000
	r204_k2 0.500000
	r205_k1 1.205000
end parameters
begin compartments
	compartment_0  3  1.0
end compartments
begin molecule types
	EGF(egfr)
	EGFR(Pro_mod~PRO_~0,cbl_cin85,egf,egfr,epn,grb2,p2mod~P~0,p3mod~P~0,pi3k,pmod~0~P,ras,rasgap,rhogap,rhogef,shc,shp,src)
	SHP(SHP2mod~SHP2~0,egfr,shc)
	Shc(egfr,grb2,pmod~P~0,shp)
	Grb2(egfr,mekk1abcdef,shc,sos)
	SOS(erk,grb2,pmod~P~0)
	Raf(akt,mek,mekk1abcdef,p2mod~P~0,pase,pmod~P~0,ras)
	MEK(erk,mekk1abcdef,p2mod~P~0,pmod~P~0,pp2a,raf)
	ERK(mek,mekk1abcdef,mkp3,p2mod~P~0,pmod~P~0,rok,sos)
	Pase(raf)
	PP2A(mek)
	MKP3(erk)
	RasGAP(egfr,ras)
	PI3K(egfr,pip3,pmod~P~0,tp4)
	TP4(pi3k)
	PIP3(PIP2mod~PIP2~0,akt,pi3k,pten,rac,racgef,takt)
	Akt(pdk1,pip3,pmod~P~0,raf)
	PDK1(akt)
	Takt(pip3)
	PTEN(pip3,pmod~P~0,rok)
	RacGEF(pip3)
	RhoGDI(rac,rho)
	RacGAP(rac)
	RhoGEF(egfr,pmod~P~0,ras,rho,src)
	RhoGAP(egfr,pmod~P~0,rho,src)
	ROK(epn,erk,pmod~P~0,pten,rho)
	Src(egfr,pmod~P~0,rhogap,rhogef,tp7)
	TP7(src)
	Cbl_CIN85(egfr)
	EPn(egfr,mpase,pmod~P~0,rok)
	EGF_pEGFR_2_degrade()
	MPase(epn)
	pEPn_Mpase()
	MEKK1abcdef(erk,grb2,mek,raf,ras,rho,rhogtp)
	RhoG()
	Rac(GDPmod~GDP~0,GTPmod~GTP~0,pip3,racgap,rhogdi)
	Ras(GDPmod~GDP~0,GTPmod~GTP~0,egfr,raf,rasgap,rhogef)
	RasG()
	RacG()
	Rho(GDPmod~GDP~0,GTPmod~GTP~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok)
end molecule types
begin seed species
	@compartment_0:EGF(egfr) 0.0081967 #EGF #species_0
	@compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) 0.3 #EGFR #species_1
	@compartment_0:SHP(SHP2mod~0,egfr,shc) 0.1 #SHP #species_5
	@compartment_0:Shc(egfr,grb2,pmod~0,shp) 1.0 #Shc #species_7
	@compartment_0:Grb2(egfr,mekk1abcdef,shc,sos) 1.0 #Grb2 #species_12
	@compartment_0:SOS(erk,grb2,pmod~0) 0.3 #SOS #species_14
	@compartment_0:Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) 0.15 #RasGDP #species_17
	@compartment_0:Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras) 0.5 #Raf #species_23
	@compartment_0:MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) 0.68 #MEK #species_26
	@compartment_0:ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) 0.4 #ERK #species_31
	@compartment_0:Pase(raf) 0.5 #Pase #species_36
	@compartment_0:PP2A(mek) 0.02 #PP2A #species_38
	@compartment_0:MKP3(erk) 0.002 #MKP3 #species_41
	@compartment_0:RasGAP(egfr,ras) 0.1 #RasGAP #species_44
	@compartment_0:PI3K(egfr,pip3,pmod~0,tp4) 0.01 #PI3K #species_49
	@compartment_0:TP4(pi3k) 0.2 #TP4 #species_53
	@compartment_0:PIP3(PIP2mod~PIP2,akt,pi3k,pten,rac,racgef,takt) 0.5 #PIP2 #species_55
	@compartment_0:PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) 0.5 #PIP3 #species_57
	@compartment_0:Akt(pdk1,pip3,pmod~0,raf) 0.1 #Akt #species_58
	@compartment_0:PDK1(akt) 0.1 #PDK1 #species_60
	@compartment_0:Takt(pip3) 0.1 #Takt #species_64
	@compartment_0:PTEN(pip3,pmod~0,rok) 0.1 #PTEN #species_69
	@compartment_0:RacGEF(pip3) 0.1 #RacGEF #species_73
	@compartment_0:Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi) 0.2 #RacGDP #species_75
	@compartment_0:RhoGDI(rac,rho) 0.1 #RhoGDI #species_78
	@compartment_0:RacGAP(rac) 0.1 #RacGAP #species_80
	@compartment_0:Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) 0.15 #RhoGDP #species_82
	@compartment_0:SHP(SHP2mod~SHP2,egfr,shc) 0.1 #SHP2 #species_90
	@compartment_0:RhoGEF(egfr,pmod~0,ras,rho,src) 0.1 #RhoGEF #species_94
	@compartment_0:RhoGAP(egfr,pmod~0,rho,src) 0.5 #RhoGAP #species_97
	@compartment_0:ROK(epn,erk,pmod~0,pten,rho) 0.68 #ROK #species_105
	@compartment_0:Src(egfr,pmod~0,rhogap,rhogef,tp7) 0.518 #Src #species_107
	@compartment_0:TP7(src) 0.518 #TP7 #species_111
	@compartment_0:Cbl_CIN85(egfr) 0.8 #Cbl_CIN85 #species_114
	@compartment_0:EPn(egfr,mpase,pmod~0,rok) 0.5 #EPn #species_117
	@compartment_0:EGFR(Pro_mod~PRO_,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) 3000.0 #Pro_EGFR #species_122
	@compartment_0:MPase(epn) 1.0 #MPase #species_125
	@compartment_0:MEKK1abcdef(erk,grb2,mek,raf,ras,rho,rhogtp) 0.5 #MEKK1abcdef #species_130
end seed species
begin observables
	Species EGF_compartment_0 @compartment_0:EGF(egfr) #EGF
	Species EGFR_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) #EGFR
	Species EGF_EGFR_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3) #EGF-EGFR
	Species EGF_EGFR_2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) #EGF-EGFR-2
	Species EGF_pEGFR_2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2
	Species SHP_compartment_0 @compartment_0:SHP(SHP2mod~0,egfr,shc) #SHP
	Species EGF_pEGFR_2_SHP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).SHP(SHP2mod~0,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-SHP
	Species Shc_compartment_0 @compartment_0:Shc(egfr,grb2,pmod~0,shp) #Shc
	Species EGF_pEGFR_2_Shc_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~0,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Shc
	Species EGF_pEGFR_2_pShc_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc
	Species pShc_compartment_0 @compartment_0:Shc(egfr,grb2,pmod~P,shp) #pShc
	Species pShc_SHP_compartment_0 @compartment_0:Shc(egfr,grb2,pmod~P,shp!7).SHP(SHP2mod~0,egfr,shc!7) #pShc-SHP
	Species Grb2_compartment_0 @compartment_0:Grb2(egfr,mekk1abcdef,shc,sos) #Grb2
	Species EGF_pEGFR_2_pShc_Grb2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2
	Species SOS_compartment_0 @compartment_0:SOS(erk,grb2,pmod~0) #SOS
	Species EGF_pEGFR_2_pShc_Grb2_SOS_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-SOS
	Species Grb2_SOS_compartment_0 @compartment_0:Grb2(egfr,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0) #Grb2-SOS
	Species RasGDP_compartment_0 @compartment_0:Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) #RasGDP
	Species EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~GDP,GTPmod~0,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-SOS-RasGDP
	Species RasGTP_compartment_0 @compartment_0:Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) #RasGTP
	Species EGF_pEGFR_2_Grb2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2
	Species EGF_pEGFR_2_Grb2_SOS_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-SOS
	Species EGF_pEGFR_2_Grb2_SOS_RasGDP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~GDP,GTPmod~0,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-SOS-RasGDP
	Species Raf_compartment_0 @compartment_0:Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras) #Raf
	Species Raf_RasGTP_compartment_0 @compartment_0:Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras!16).Ras(GDPmod~0,GTPmod~GTP,egfr,raf!16,rasgap,rhogef) #Raf-RasGTP
	Species pRaf_compartment_0 @compartment_0:Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) #pRaf
	Species MEK_compartment_0 @compartment_0:MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) #MEK
	Species pRaf_MEK_compartment_0 @compartment_0:Raf(akt,mek!6,mekk1abcdef,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf!6) #pRaf-MEK
	Species pMEK_compartment_0 @compartment_0:MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf) #pMEK
	Species pRaf_pMEK_compartment_0 @compartment_0:Raf(akt,mek!6,mekk1abcdef,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf!6) #pRaf-pMEK
	Species ppMEK_compartment_0 @compartment_0:MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) #ppMEK
	Species ERK_compartment_0 @compartment_0:ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) #ERK
	Species ppMEK_ERK_compartment_0 @compartment_0:ERK(mek!25,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk!25,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) #ppMEK-ERK
	Species pERK_compartment_0 @compartment_0:ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos) #pERK
	Species ppMEK_pERK_compartment_0 @compartment_0:ERK(mek!25,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk!25,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) #ppMEK-pERK
	Species ppERK_compartment_0 @compartment_0:ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) #ppERK
	Species Pase_compartment_0 @compartment_0:Pase(raf) #Pase
	Species pRaf_Pase_compartment_0 @compartment_0:Raf(akt,mek,mekk1abcdef,p2mod~0,pase!10,pmod~P,ras).Pase(raf!10) #pRaf-Pase
	Species PP2A_compartment_0 @compartment_0:PP2A(mek) #PP2A
	Species ppMEK_PP2A_compartment_0 @compartment_0:MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a!9,raf).PP2A(mek!9) #ppMEK-PP2A
	Species pMEK_PP2A_compartment_0 @compartment_0:MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a!9,raf).PP2A(mek!9) #pMEK-PP2A
	Species MKP3_compartment_0 @compartment_0:MKP3(erk) #MKP3
	Species ppERK_MKP3_compartment_0 @compartment_0:ERK(mek,mekk1abcdef,mkp3!13,p2mod~P,pmod~P,rok,sos).MKP3(erk!13) #ppERK-MKP3
	Species pERK_MKP3_compartment_0 @compartment_0:ERK(mek,mekk1abcdef,mkp3!13,p2mod~0,pmod~P,rok,sos).MKP3(erk!13) #pERK-MKP3
	Species RasGAP_compartment_0 @compartment_0:RasGAP(egfr,ras) #RasGAP
	Species RasGTP_RasGAP_compartment_0 @compartment_0:Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap!22,rhogef).RasGAP(egfr,ras!22) #RasGTP-RasGAP
	Species ppERK_EGF_pEGFR_2_pShc_Grb2_SOS_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos!47).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk!47,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) #ppERK-EGF-pEGFR-2-pShc-Grb2-SOS
	Species pSOS_compartment_0 @compartment_0:SOS(erk,grb2,pmod~P) #pSOS
	Species ppERK_EGF_pEGFR_2_Grb2_SOS_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos!47).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk!47,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) #ppERK-EGF-pEGFR-2-Grb2-SOS
	Species PI3K_compartment_0 @compartment_0:PI3K(egfr,pip3,pmod~0,tp4) #PI3K
	Species EGF_pEGFR_2_PI3K_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k!41,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).PI3K(egfr!41,pip3,pmod~0,tp4).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-PI3K
	Species EGF_pEGFF_2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFF-2
	Species pPI3K_compartment_0 @compartment_0:PI3K(egfr,pip3,pmod~P,tp4) #pPI3K
	Species TP4_compartment_0 @compartment_0:TP4(pi3k) #TP4
	Species pPI3K_TP4_compartment_0 @compartment_0:PI3K(egfr,pip3,pmod~P,tp4!12).TP4(pi3k!12) #pPI3K-TP4
	Species PIP2_compartment_0 @compartment_0:PIP3(PIP2mod~PIP2,akt,pi3k,pten,rac,racgef,takt) #PIP2
	Species pPI3K_PIP2_compartment_0 @compartment_0:PIP3(PIP2mod~PIP2,akt,pi3k!26,pten,rac,racgef,takt).PI3K(egfr,pip3!26,pmod~P,tp4) #pPI3K-PIP2
	Species PIP3_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) #PIP3
	Species Akt_compartment_0 @compartment_0:Akt(pdk1,pip3,pmod~0,raf) #Akt
	Species Akt_PIP3_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~0,raf) #Akt-PIP3
	Species PDK1_compartment_0 @compartment_0:PDK1(akt) #PDK1
	Species Akt_PIP3_PDK1_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1!27,pip3!1,pmod~0,raf).PDK1(akt!27) #Akt-PIP3-PDK1
	Species pAkt_PIP3_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~P,raf) #pAkt-PIP3
	Species pAkt_compartment_0 @compartment_0:Akt(pdk1,pip3,pmod~P,raf) #pAkt
	Species Takt_compartment_0 @compartment_0:Takt(pip3) #Takt
	Species pAkt_PIP3_Takt_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt!32).Akt(pdk1,pip3!1,pmod~P,raf).Takt(pip3!32) #pAkt-PIP3-Takt
	Species pRaf_pAkt_PIP3_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Raf(akt!36,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras).Akt(pdk1,pip3!1,pmod~P,raf!36) #pRaf-pAkt-PIP3
	Species ppRaf_compartment_0 @compartment_0:Raf(akt,mek,mekk1abcdef,p2mod~P,pase,pmod~P,ras) #ppRaf
	Species pROK_compartment_0 @compartment_0:ROK(epn,erk,pmod~P,pten,rho) #pROK
	Species PTEN_compartment_0 @compartment_0:PTEN(pip3,pmod~0,rok) #PTEN
	Species pROK_PTEN_compartment_0 @compartment_0:ROK(epn,erk,pmod~P,pten!11,rho).PTEN(pip3,pmod~0,rok!11) #pROK-PTEN
	Species pPTEN_compartment_0 @compartment_0:PTEN(pip3,pmod~P,rok) #pPTEN
	Species pPTEN_PIP3_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt,pi3k,pten!15,rac,racgef,takt).PTEN(pip3!15,pmod~P,rok) #pPTEN-PIP3
	Species RacGEF_compartment_0 @compartment_0:RacGEF(pip3) #RacGEF
	Species PIP3_RacGEF_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef!4,takt).RacGEF(pip3!4) #PIP3-RacGEF
	Species RacGDP_compartment_0 @compartment_0:Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi) #RacGDP
	Species PIP3_RacGEF_RacGDP_compartment_0 @compartment_0:PIP3(PIP2mod~0,akt,pi3k,pten,rac!33,racgef!4,takt).Rac(GDPmod~GDP,GTPmod~0,pip3!33,racgap,rhogdi).RacGEF(pip3!4) #PIP3-RacGEF-RacGDP
	Species RacGTP_compartment_0 @compartment_0:Rac(GDPmod~0,GTPmod~GTP,pip3,racgap,rhogdi) #RacGTP
	Species RhoGDI_compartment_0 @compartment_0:RhoGDI(rac,rho) #RhoGDI
	Species RhoGDI_RacGDP_compartment_0 @compartment_0:Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi!23).RhoGDI(rac!23,rho) #RhoGDI-RacGDP
	Species RacGAP_compartment_0 @compartment_0:RacGAP(rac) #RacGAP
	Species RacGTP_RacGAP_compartment_0 @compartment_0:Rac(GDPmod~0,GTPmod~GTP,pip3,racgap!20,rhogdi).RacGAP(rac!20) #RacGTP-RacGAP
	Species RhoGDP_compartment_0 @compartment_0:Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) #RhoGDP
	Species RhoGDP_RhoGDI_compartment_0 @compartment_0:Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi!21,rhogef,rok).RhoGDI(rac,rho!21) #RhoGDP-RhoGDI
	Species pRhoGEF_compartment_0 @compartment_0:RhoGEF(egfr,pmod~P,ras,rho,src) #pRhoGEF
	Species RhoGDP_pRhoGEF_compartment_0 @compartment_0:Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef!29,rok).RhoGEF(egfr,pmod~P,ras,rho!29,src) #RhoGDP-pRhoGEF
	Species RhoGTP_compartment_0 @compartment_0:Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) #RhoGTP
	Species EGF_pEGFR_2_RasGAP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-RasGAP
	Species EGF_pEGFR_2_RasGAP_RasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap!22,rhogef).RasGAP(egfr!42,ras!22).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-RasGAP-RasGTP
	Species EGF_pEGFR2_RasGAP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR2-RasGAP
	Species SHP2_compartment_0 @compartment_0:SHP(SHP2mod~SHP2,egfr,shc) #SHP2
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-SHP2
	Species EGF_pEGFR_2_Grb2_SHP2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-SHP2
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef!48,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RhoGEF(egfr!48,pmod~P,ras,rho,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-SHP2-pRhoGEF
	Species RhoGEF_compartment_0 @compartment_0:RhoGEF(egfr,pmod~0,ras,rho,src) #RhoGEF
	Species pRhoGAP_compartment_0 @compartment_0:RhoGAP(egfr,pmod~P,rho,src) #pRhoGAP
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho,src).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-SHP2-pRhoGAP
	Species RhoGAP_compartment_0 @compartment_0:RhoGAP(egfr,pmod~0,rho,src) #RhoGAP
	Species EGF_pEGFR_2_Grb2_SHP2_pRhoGEF_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef!48,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RhoGEF(egfr!48,pmod~P,ras,rho,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-SHP2-pRhoGEF
	Species EGF_pEGFR_2_Grb2_SHP2_pRhoGAP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).RhoGAP(egfr!49,pmod~P,rho,src).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-SHP2-pRhoGAP
	Species EGF_pEGFR_2_RasGAP_SHP2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).SHP(SHP2mod~SHP2,egfr!39,shc).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-RasGAP-SHP2
	Species pSrc_compartment_0 @compartment_0:Src(egfr,pmod~P,rhogap,rhogef,tp7) #pSrc
	Species pSrc_RhoGEF_compartment_0 @compartment_0:RhoGEF(egfr,pmod~0,ras,rho,src!18).Src(egfr,pmod~P,rhogap,rhogef!18,tp7) #pSrc-RhoGEF
	Species pSrc_RhoGAP_compartment_0 @compartment_0:Src(egfr,pmod~P,rhogap!19,rhogef,tp7).RhoGAP(egfr,pmod~0,rho,src!19) #pSrc-RhoGAP
	Species pRhoGAP_RhoGTP_compartment_0 @compartment_0:Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap!28,rhogdi,rhogef,rok).RhoGAP(egfr,pmod~P,rho!28,src) #pRhoGAP-RhoGTP
	Species ROK_compartment_0 @compartment_0:ROK(epn,erk,pmod~0,pten,rho) #ROK
	Species RhoGTP_ROK_compartment_0 @compartment_0:Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok!17).ROK(epn,erk,pmod~0,pten,rho!17) #RhoGTP-ROK
	Species Src_compartment_0 @compartment_0:Src(egfr,pmod~0,rhogap,rhogef,tp7) #Src
	Species EGF_pEGFR_2_Src_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src!38).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Src(egfr!38,pmod~0,rhogap,rhogef,tp7).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Src
	Species EGF_pEGFR_2_pSrc_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src!38).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Src(egfr!38,pmod~P,rhogap,rhogef,tp7).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pSrc
	Species EGF_pEGRF_2_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) #EGF-pEGRF-2
	Species TP7_compartment_0 @compartment_0:TP7(src) #TP7
	Species pSrc_TP7_compartment_0 @compartment_0:Src(egfr,pmod~P,rhogap,rhogef,tp7!0).TP7(src!0) #pSrc-TP7
	Species Src_TP7_compartment_0 @compartment_0:Src(egfr,pmod~0,rhogap,rhogef,tp7!0).TP7(src!0) #Src-TP7
	Species Cbl_CIN85_compartment_0 @compartment_0:Cbl_CIN85(egfr) #Cbl-CIN85
	Species EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) #EGF-pEGFR-2-pShc-Grb2-SOS-Cbl-CIN85
	Species EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) #EGF-pEGFR-2-Grb2-SOS-Cbl-CIN85
	Species EPn_compartment_0 @compartment_0:EPn(egfr,mpase,pmod~0,rok) #EPn
	Species EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn!50,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).EPn(egfr!50,mpase,pmod~0,rok).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) #EGF-pEGFR-2-pShc-Grb2-SOS-Cbl-CIN85-EPn
	Species EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn!50,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).EPn(egfr!50,mpase,pmod~0,rok).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) #EGF-pEGFR-2-Grb2-SOS-Cbl-CIN85-EPn
	Species EGF_pEGFR_2_degrade_compartment_0 @compartment_0:EGF_pEGFR_2_degrade() #EGF-pEGFR-2-degrade
	Species pShc_Grb2_SOS_compartment_0 @compartment_0:Grb2(egfr,mekk1abcdef,shc!31,sos!2).Shc(egfr,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0) #pShc-Grb2-SOS
	Species Pro_EGFR_compartment_0 @compartment_0:EGFR(Pro_mod~PRO_,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) #Pro-EGFR
	Species pROK_EPn_compartment_0 @compartment_0:ROK(epn!8,erk,pmod~P,pten,rho).EPn(egfr,mpase,pmod~0,rok!8) #pROK-EPn
	Species pEPn_compartment_0 @compartment_0:EPn(egfr,mpase,pmod~P,rok) #pEPn
	Species MPase_compartment_0 @compartment_0:MPase(epn) #MPase
	Species pEPn_MPase_compartment_0 @compartment_0:EPn(egfr,mpase!14,pmod~P,rok).MPase(epn!14) #pEPn-MPase
	Species pEPn_Mpase_compartment_0 @compartment_0:pEPn_Mpase() #pEPn-Mpase
	Species Ras_GTP_RhoGEF_compartment_0 @compartment_0:Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef!24).RhoGEF(egfr,pmod~0,ras!24,rho,src) #Ras-GTP-RhoGEF
	Species ppERK_pROK_compartment_0 @compartment_0:ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok!30,sos).ROK(epn,erk!30,pmod~P,pten,rho) #ppERK-pROK
	Species MEKK1abcdef_compartment_0 @compartment_0:MEKK1abcdef(erk,grb2,mek,raf,ras,rho,rhogtp) #MEKK1abcdef
	Species Grb2_MEKK1abcdef_compartment_0 @compartment_0:MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr,mekk1abcdef!5,shc,sos) #Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abpMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abpMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcpERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcppERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcpERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcppERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1apRafbcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1apRafbMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1apRafbpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1apRafbppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcpERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcppERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcpERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1abppMEKcppERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcpERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~P,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcppERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcpERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~P,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcppERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf_compartment_0 @compartment_0:EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).EGF(egfr!3).EGF(egfr!35) #EGF-pEGFR-2-Grb2-MEKK1aRafbcdRhoGTPepRhoGAPf
end observables
begin reaction rules
	reaction_0: EGF(egfr) + EGFR(Pro_mod~0,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3) r1_k1,r1_k2
	reaction_1: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3) + EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) r2_k1 * 2,r2_k2
	reaction_2: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) (r3_k1)/2
	reaction_3: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + SHP(SHP2mod~0,egfr,shc) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).SHP(SHP2mod~0,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) r4_k1,r4_k2
	reaction_4: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).SHP(SHP2mod~0,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + SHP(SHP2mod~0,egfr,shc) r5_k1
	reaction_5: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Shc(egfr,grb2,pmod~0,shp) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~0,shp).EGF(egfr!3).EGF(egfr!35) r6_k1,r6_k2
	reaction_6: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~0,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r7_k1
	reaction_7: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Shc(egfr,grb2,pmod~P,shp) r8_k1,r8_k2
	reaction_8: Shc(egfr,grb2,pmod~P,shp) + SHP(SHP2mod~0,egfr,shc) <-> Shc(egfr,grb2,pmod~P,shp!7).SHP(SHP2mod~0,egfr,shc!7) r9_k1,r9_k2
	reaction_9: Shc(egfr,grb2,pmod~P,shp!7).SHP(SHP2mod~0,egfr,shc!7) -> Shc(egfr,grb2,pmod~0,shp) + SHP(SHP2mod~0,egfr,shc) r10_k1
	reaction_10: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Grb2(egfr,mekk1abcdef,shc,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r11_k1,r11_k2
	reaction_11: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + SOS(erk,grb2,pmod~0) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r12_k1,r12_k2
	reaction_12: Grb2(egfr,mekk1abcdef,shc,sos) + SOS(erk,grb2,pmod~0) <-> Grb2(egfr,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0) r13_k1,r13_k2
	reaction_13: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Grb2(egfr,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r14_k1,r14_k2
	reaction_14: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~GDP,GTPmod~0,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r15_k1,r15_k2
	reaction_15: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~GDP,GTPmod~0,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) r16_k1
	reaction_16: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Grb2(egfr,mekk1abcdef,shc,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).EGF(egfr!3).EGF(egfr!35) r17_k1,r17_k2
	reaction_17: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).EGF(egfr!3).EGF(egfr!35) + SOS(erk,grb2,pmod~0) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r18_k1,r18_k2
	reaction_18: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Grb2(egfr,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r19_k1,r19_k2
	reaction_19: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~GDP,GTPmod~0,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r20_k1,r20_k2
	reaction_20: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~GDP,GTPmod~0,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) r21_k1
	reaction_21: Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) <-> Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras!16).Ras(GDPmod~0,GTPmod~GTP,egfr,raf!16,rasgap,rhogef) r22_k1,r22_k2
	reaction_22: Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras!16).Ras(GDPmod~0,GTPmod~GTP,egfr,raf!16,rasgap,rhogef) -> Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) r23_k1
	reaction_23: Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> Raf(akt,mek!6,mekk1abcdef,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf!6) r24_k1,r24_k2
	reaction_24: Raf(akt,mek!6,mekk1abcdef,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf!6) -> Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf) r25_k1
	reaction_25: Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf) <-> Raf(akt,mek!6,mekk1abcdef,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf!6) r26_k1,r26_k2
	reaction_26: Raf(akt,mek!6,mekk1abcdef,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf!6) -> Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r27_k1
	reaction_27: MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> ERK(mek!25,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk!25,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r28_k1,r28_k2
	reaction_28: ERK(mek!25,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk!25,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) -> MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos) r29_k1
	reaction_29: MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos) <-> ERK(mek!25,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk!25,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r30_k1,r30_k2
	reaction_30: ERK(mek!25,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk!25,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) -> MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r31_k1
	reaction_31: Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + Pase(raf) <-> Raf(akt,mek,mekk1abcdef,p2mod~0,pase!10,pmod~P,ras).Pase(raf!10) r32_k1,r32_k2
	reaction_32: Raf(akt,mek,mekk1abcdef,p2mod~0,pase!10,pmod~P,ras).Pase(raf!10) -> Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras) + Pase(raf) r33_k1
	reaction_33: MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) + PP2A(mek) <-> MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a!9,raf).PP2A(mek!9) r34_k1,r34_k2
	reaction_34: MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a!9,raf).PP2A(mek!9) -> MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf) + PP2A(mek) r35_k1
	reaction_35: MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a,raf) + PP2A(mek) <-> MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a!9,raf).PP2A(mek!9) r36_k1,r36_k2
	reaction_36: MEK(erk,mekk1abcdef,p2mod~0,pmod~P,pp2a!9,raf).PP2A(mek!9) -> MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) + PP2A(mek) r37_k1
	reaction_37: ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + MKP3(erk) <-> ERK(mek,mekk1abcdef,mkp3!13,p2mod~P,pmod~P,rok,sos).MKP3(erk!13) r38_k1,r38_k2
	reaction_38: ERK(mek,mekk1abcdef,mkp3!13,p2mod~P,pmod~P,rok,sos).MKP3(erk!13) -> ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos) + MKP3(erk) r39_k1
	reaction_39: ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~P,rok,sos) + MKP3(erk) <-> ERK(mek,mekk1abcdef,mkp3!13,p2mod~0,pmod~P,rok,sos).MKP3(erk!13) r40_k1,r40_k2
	reaction_40: ERK(mek,mekk1abcdef,mkp3!13,p2mod~0,pmod~P,rok,sos).MKP3(erk!13) -> ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) + MKP3(erk) r41_k1
	reaction_41: Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) -> Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) r42_k1
	reaction_42: Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) + RasGAP(egfr,ras) <-> Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap!22,rhogef).RasGAP(egfr,ras!22) r43_k1,r43_k2
	reaction_43: Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap!22,rhogef).RasGAP(egfr,ras!22) -> Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) + RasGAP(egfr,ras) r44_k1
	reaction_44: ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos!47).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk!47,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r45_k1,r45_k2
	reaction_45: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos!47).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk!47,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) -> ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Shc(egfr,grb2,pmod~P,shp) + Grb2(egfr,mekk1abcdef,shc,sos) + SOS(erk,grb2,pmod~P) r46_k1
	reaction_46: ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos!47).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk!47,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) r47_k1,r47_k2
	reaction_47: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos!47).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk!47,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) -> ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Grb2(egfr,mekk1abcdef,shc,sos) + SOS(erk,grb2,pmod~P) r48_k1
	reaction_48: SOS(erk,grb2,pmod~P) -> SOS(erk,grb2,pmod~0) r49_k1
	reaction_49: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + PI3K(egfr,pip3,pmod~0,tp4) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k!41,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).PI3K(egfr!41,pip3,pmod~0,tp4).EGF(egfr!3).EGF(egfr!35) r50_k1,r50_k2
	reaction_50: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k!41,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).PI3K(egfr!41,pip3,pmod~0,tp4).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + PI3K(egfr,pip3,pmod~P,tp4) r51_k1
	reaction_51: PI3K(egfr,pip3,pmod~P,tp4) + TP4(pi3k) <-> PI3K(egfr,pip3,pmod~P,tp4!12).TP4(pi3k!12) r52_k1,r52_k2
	reaction_52: PI3K(egfr,pip3,pmod~P,tp4!12).TP4(pi3k!12) -> PI3K(egfr,pip3,pmod~0,tp4) + TP4(pi3k) r53_k1
	reaction_53: PI3K(egfr,pip3,pmod~P,tp4) + PIP3(PIP2mod~PIP2,akt,pi3k,pten,rac,racgef,takt) <-> PIP3(PIP2mod~PIP2,akt,pi3k!26,pten,rac,racgef,takt).PI3K(egfr,pip3!26,pmod~P,tp4) r54_k1,r54_k2
	reaction_54: PIP3(PIP2mod~PIP2,akt,pi3k!26,pten,rac,racgef,takt).PI3K(egfr,pip3!26,pmod~P,tp4) -> PI3K(egfr,pip3,pmod~P,tp4) + PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) r55_k1
	reaction_55: Akt(pdk1,pip3,pmod~0,raf) + PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) <-> PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~0,raf) r56_k1,r56_k2
	reaction_56: PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~0,raf) + PDK1(akt) <-> PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1!27,pip3!1,pmod~0,raf).PDK1(akt!27) r57_k1,r57_k2
	reaction_57: PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1!27,pip3!1,pmod~0,raf).PDK1(akt!27) -> PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~P,raf) + PDK1(akt) r58_k1
	reaction_58: PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~P,raf) <-> Akt(pdk1,pip3,pmod~P,raf) + PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) r59_k1,r59_k2
	reaction_59: PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~P,raf) + Takt(pip3) <-> PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt!32).Akt(pdk1,pip3!1,pmod~P,raf).Takt(pip3!32) r60_k1,r60_k2
	reaction_60: PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt!32).Akt(pdk1,pip3!1,pmod~P,raf).Takt(pip3!32) -> PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~0,raf) + Takt(pip3) r61_k1
	reaction_61: Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) + PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~P,raf) <-> PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Raf(akt!36,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras).Akt(pdk1,pip3!1,pmod~P,raf!36) r62_k1,r62_k2
	reaction_62: PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Raf(akt!36,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras).Akt(pdk1,pip3!1,pmod~P,raf!36) -> Raf(akt,mek,mekk1abcdef,p2mod~P,pase,pmod~P,ras) + PIP3(PIP2mod~0,akt!1,pi3k,pten,rac,racgef,takt).Akt(pdk1,pip3!1,pmod~P,raf) r63_k1
	reaction_63: Raf(akt,mek,mekk1abcdef,p2mod~P,pase,pmod~P,ras) -> Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) r64_k1
	reaction_64: ROK(epn,erk,pmod~P,pten,rho) + PTEN(pip3,pmod~0,rok) <-> ROK(epn,erk,pmod~P,pten!11,rho).PTEN(pip3,pmod~0,rok!11) r65_k1,r65_k2
	reaction_65: ROK(epn,erk,pmod~P,pten!11,rho).PTEN(pip3,pmod~0,rok!11) -> ROK(epn,erk,pmod~P,pten,rho) + PTEN(pip3,pmod~P,rok) r66_k1
	reaction_66: PTEN(pip3,pmod~P,rok) + PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) <-> PIP3(PIP2mod~0,akt,pi3k,pten!15,rac,racgef,takt).PTEN(pip3!15,pmod~P,rok) r67_k1,r67_k2
	reaction_67: PIP3(PIP2mod~0,akt,pi3k,pten!15,rac,racgef,takt).PTEN(pip3!15,pmod~P,rok) -> PTEN(pip3,pmod~P,rok) + PIP3(PIP2mod~PIP2,akt,pi3k,pten,rac,racgef,takt) r68_k1
	reaction_68: PTEN(pip3,pmod~P,rok) -> PTEN(pip3,pmod~0,rok) r69_k1
	reaction_69: PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) -> PIP3(PIP2mod~PIP2,akt,pi3k,pten,rac,racgef,takt) r70_k1
	reaction_70: PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef,takt) + RacGEF(pip3) <-> PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef!4,takt).RacGEF(pip3!4) r71_k1,r71_k2
	reaction_71: PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef!4,takt).RacGEF(pip3!4) + Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi) <-> PIP3(PIP2mod~0,akt,pi3k,pten,rac!33,racgef!4,takt).Rac(GDPmod~GDP,GTPmod~0,pip3!33,racgap,rhogdi).RacGEF(pip3!4) r72_k1,r72_k2
	reaction_72: PIP3(PIP2mod~0,akt,pi3k,pten,rac!33,racgef!4,takt).Rac(GDPmod~GDP,GTPmod~0,pip3!33,racgap,rhogdi).RacGEF(pip3!4) -> PIP3(PIP2mod~0,akt,pi3k,pten,rac,racgef!4,takt).RacGEF(pip3!4) + Rac(GDPmod~0,GTPmod~GTP,pip3,racgap,rhogdi) r73_k1
	reaction_73: RhoGDI(rac,rho) + Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi) <-> Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi!23).RhoGDI(rac!23,rho) r74_k1,r74_k2
	reaction_74: Rac(GDPmod~0,GTPmod~GTP,pip3,racgap,rhogdi) -> Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi) r75_k1
	reaction_75: Rac(GDPmod~0,GTPmod~GTP,pip3,racgap,rhogdi) + RacGAP(rac) <-> Rac(GDPmod~0,GTPmod~GTP,pip3,racgap!20,rhogdi).RacGAP(rac!20) r76_k1,r76_k2
	reaction_76: Rac(GDPmod~0,GTPmod~GTP,pip3,racgap!20,rhogdi).RacGAP(rac!20) -> Rac(GDPmod~GDP,GTPmod~0,pip3,racgap,rhogdi) + RacGAP(rac) r77_k1
	reaction_77: Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGDI(rac,rho) <-> Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi!21,rhogef,rok).RhoGDI(rac,rho!21) r78_k1,r78_k2
	reaction_78: Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGEF(egfr,pmod~P,ras,rho,src) <-> Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef!29,rok).RhoGEF(egfr,pmod~P,ras,rho!29,src) r79_k1,r79_k2
	reaction_79: Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef!29,rok).RhoGEF(egfr,pmod~P,ras,rho!29,src) -> Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGEF(egfr,pmod~P,ras,rho,src) r80_k1
	reaction_80: Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) -> Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) r81_k1
	reaction_81: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + RasGAP(egfr,ras) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) r82_k1,r82_k2
	reaction_82: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap!22,rhogef).RasGAP(egfr!42,ras!22).EGF(egfr!3).EGF(egfr!35) r83_k1,r83_k2
	reaction_83: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap!22,rhogef).RasGAP(egfr!42,ras!22).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~GDP,GTPmod~0,egfr,raf,rasgap,rhogef) r84_k1
	reaction_84: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + SHP(SHP2mod~SHP2,egfr,shc) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) r85_k1,r85_k2
	reaction_85: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).EGF(egfr!3).EGF(egfr!35) + SHP(SHP2mod~SHP2,egfr,shc) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) r86_k1,r86_k2
	reaction_86: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Shc(egfr,grb2,pmod~P,shp) + Grb2(egfr,mekk1abcdef,shc,sos) + SHP(SHP2mod~SHP2,egfr,shc) r87_k1
	reaction_87: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Grb2(egfr,mekk1abcdef,shc,sos) + SHP(SHP2mod~SHP2,egfr,shc) r88_k1
	reaction_88: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) + RhoGEF(egfr,pmod~P,ras,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef!48,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RhoGEF(egfr!48,pmod~P,ras,rho,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) r89_k1,r89_k2
	reaction_89: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef!48,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RhoGEF(egfr!48,pmod~P,ras,rho,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) + RhoGEF(egfr,pmod~0,ras,rho,src) r90_k1
	reaction_90: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~P,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho,src).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) r91_k1,r91_k2
	reaction_91: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho,src).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2!31,pmod~P,shp!7).Grb2(egfr!40,mekk1abcdef,shc!31,sos).SHP(SHP2mod~SHP2,egfr!39,shc!7).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~0,rho,src) r92_k1
	reaction_92: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) + RhoGEF(egfr,pmod~P,ras,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef!48,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RhoGEF(egfr!48,pmod~P,ras,rho,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) r93_k1,r93_k2
	reaction_93: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef!48,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RhoGEF(egfr!48,pmod~P,ras,rho,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) + RhoGEF(egfr,pmod~0,ras,rho,src) r94_k1
	reaction_94: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~P,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).RhoGAP(egfr!49,pmod~P,rho,src).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) r95_k1,r95_k2
	reaction_95: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).RhoGAP(egfr!49,pmod~P,rho,src).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos).SHP(SHP2mod~SHP2,egfr!39,shc).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~0,rho,src) r96_k1
	reaction_96: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) + SHP(SHP2mod~SHP2,egfr,shc) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).SHP(SHP2mod~SHP2,egfr!39,shc).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) r97_k1,r97_k2
	reaction_97: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap!42,rhogap,rhogef,shc,shp!39,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).SHP(SHP2mod~SHP2,egfr!39,shc).RasGAP(egfr!42,ras).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + RasGAP(egfr,ras) + SHP(SHP2mod~SHP2,egfr,shc) r98_k1
	reaction_98: Src(egfr,pmod~P,rhogap,rhogef,tp7) + RhoGEF(egfr,pmod~0,ras,rho,src) <-> RhoGEF(egfr,pmod~0,ras,rho,src!18).Src(egfr,pmod~P,rhogap,rhogef!18,tp7) r99_k1,r99_k2
	reaction_99: RhoGEF(egfr,pmod~0,ras,rho,src!18).Src(egfr,pmod~P,rhogap,rhogef!18,tp7) -> Src(egfr,pmod~P,rhogap,rhogef,tp7) + RhoGEF(egfr,pmod~P,ras,rho,src) r100_k1
	reaction_100: RhoGEF(egfr,pmod~P,ras,rho,src) -> RhoGEF(egfr,pmod~0,ras,rho,src) r101_k1
	reaction_101: Src(egfr,pmod~P,rhogap,rhogef,tp7) + RhoGAP(egfr,pmod~0,rho,src) <-> Src(egfr,pmod~P,rhogap!19,rhogef,tp7).RhoGAP(egfr,pmod~0,rho,src!19) r102_k1,r102_k2
	reaction_102: Src(egfr,pmod~P,rhogap!19,rhogef,tp7).RhoGAP(egfr,pmod~0,rho,src!19) -> Src(egfr,pmod~P,rhogap,rhogef,tp7) + RhoGAP(egfr,pmod~P,rho,src) r103_k1
	reaction_103: RhoGAP(egfr,pmod~P,rho,src) + Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) <-> Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap!28,rhogdi,rhogef,rok).RhoGAP(egfr,pmod~P,rho!28,src) r104_k1,r104_k2
	reaction_104: Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap!28,rhogdi,rhogef,rok).RhoGAP(egfr,pmod~P,rho!28,src) -> RhoGAP(egfr,pmod~P,rho,src) + Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) r105_k1
	reaction_105: Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + ROK(epn,erk,pmod~0,pten,rho) <-> Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok!17).ROK(epn,erk,pmod~0,pten,rho!17) r106_k1,r106_k2
	reaction_106: Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok!17).ROK(epn,erk,pmod~0,pten,rho!17) -> Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + ROK(epn,erk,pmod~P,pten,rho) r107_k1
	reaction_107: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Src(egfr,pmod~0,rhogap,rhogef,tp7) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src!38).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Src(egfr!38,pmod~0,rhogap,rhogef,tp7).EGF(egfr!3).EGF(egfr!35) r108_k1,r108_k2
	reaction_108: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src!38).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Src(egfr!38,pmod~0,rhogap,rhogef,tp7).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src!38).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Src(egfr!38,pmod~P,rhogap,rhogef,tp7).EGF(egfr!3).EGF(egfr!35) r109_k1
	reaction_109: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + Src(egfr,pmod~P,rhogap,rhogef,tp7) r110_k1,(r110_k2)/2
	reaction_110: Src(egfr,pmod~P,rhogap,rhogef,tp7) + TP7(src) <-> Src(egfr,pmod~P,rhogap,rhogef,tp7!0).TP7(src!0) r111_k1,r111_k2
	reaction_111: Src(egfr,pmod~P,rhogap,rhogef,tp7!0).TP7(src!0) -> Src(egfr,pmod~0,rhogap,rhogef,tp7!0).TP7(src!0) r112_k1
	reaction_112: Src(egfr,pmod~0,rhogap,rhogef,tp7!0).TP7(src!0) <-> Src(egfr,pmod~0,rhogap,rhogef,tp7) + TP7(src) r113_k1,r113_k2
	reaction_113: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) + Cbl_CIN85(egfr) <-> EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) r114_k1,r114_k2
	reaction_114: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35) + Cbl_CIN85(egfr) <-> EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) r115_k1,r115_k2
	reaction_115: EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) + EPn(egfr,mpase,pmod~0,rok) <-> EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn!50,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).EPn(egfr!50,mpase,pmod~0,rok).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) r116_k1,r116_k2
	reaction_116: EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) + EPn(egfr,mpase,pmod~0,rok) <-> EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn!50,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).EPn(egfr!50,mpase,pmod~0,rok).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) r117_k1,r117_k2
	reaction_117: EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn!50,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc!31,sos!2).Shc(egfr!37,grb2!31,pmod~P,shp).EPn(egfr!50,mpase,pmod~0,rok).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) -> EGF_pEGFR_2_degrade() + Cbl_CIN85(egfr) + EPn(egfr,mpase,pmod~0,rok) + Grb2(egfr,mekk1abcdef,shc!31,sos!2).Shc(egfr,grb2!31,pmod~P,shp).SOS(erk,grb2!2,pmod~0) r118_k1
	reaction_118: EGFR(Pro_mod~0,cbl_cin85!43,egf!3,egfr!34,epn!50,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Grb2(egfr!40,mekk1abcdef,shc,sos!2).EPn(egfr!50,mpase,pmod~0,rok).SOS(erk,grb2!2,pmod~0).EGF(egfr!3).EGF(egfr!35).Cbl_CIN85(egfr!43) -> EGF_pEGFR_2_degrade() + Cbl_CIN85(egfr) + EPn(egfr,mpase,pmod~0,rok) + Grb2(egfr,mekk1abcdef,shc,sos!2).SOS(erk,grb2!2,pmod~0) r119_k1
	reaction_119: EGFR(Pro_mod~PRO_,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) -> EGFR(Pro_mod~0,cbl_cin85,egf,egfr,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src) r120_k1
	reaction_120: ROK(epn,erk,pmod~P,pten,rho) + EPn(egfr,mpase,pmod~0,rok) <-> ROK(epn!8,erk,pmod~P,pten,rho).EPn(egfr,mpase,pmod~0,rok!8) r121_k1,r121_k2
	reaction_121: ROK(epn!8,erk,pmod~P,pten,rho).EPn(egfr,mpase,pmod~0,rok!8) -> ROK(epn,erk,pmod~P,pten,rho) + EPn(egfr,mpase,pmod~P,rok) r122_k1
	reaction_122: EPn(egfr,mpase,pmod~P,rok) + MPase(epn) <-> EPn(egfr,mpase!14,pmod~P,rok).MPase(epn!14) r123_k1,r123_k2
	reaction_123: pEPn_Mpase() -> EPn(egfr,mpase,pmod~0,rok) + MPase(epn) r124_k1
	reaction_124: Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) + RhoGEF(egfr,pmod~0,ras,rho,src) <-> Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef!24).RhoGEF(egfr,pmod~0,ras!24,rho,src) r125_k1,r125_k2
	reaction_125: Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef!24).RhoGEF(egfr,pmod~0,ras!24,rho,src) -> Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) + RhoGEF(egfr,pmod~P,ras,rho,src) r126_k1
	reaction_126: ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + ROK(epn,erk,pmod~P,pten,rho) <-> ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok!30,sos).ROK(epn,erk!30,pmod~P,pten,rho) r127_k1,r127_k2
	reaction_127: ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok!30,sos).ROK(epn,erk!30,pmod~P,pten,rho) -> ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) + ROK(epn,erk,pmod~0,pten,rho) r128_k1
	reaction_128: Grb2(egfr,mekk1abcdef,shc,sos) + MEKK1abcdef(erk,grb2,mek,raf,ras,rho,rhogtp) <-> MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr,mekk1abcdef!5,shc,sos) r129_k1,r129_k2
	reaction_129: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).Shc(egfr!37,grb2,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr,mekk1abcdef!5,shc,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r130_k1,r130_k2
	reaction_130: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).EGF(egfr!3).EGF(egfr!35) + MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr,mekk1abcdef!5,shc,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r131_k1,r131_k2
	reaction_131: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r132_k1,r132_k2
	reaction_132: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r133_k1
	reaction_133: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r134_k1
	reaction_134: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r135_k1,r135_k2
	reaction_135: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r136_k1,r136_k2
	reaction_136: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r137_k1
	reaction_137: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r138_k1
	reaction_138: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r139_k1,r139_k2
	reaction_139: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r140_k1,r140_k2
	reaction_140: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r141_k1,r141_k2
	reaction_141: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r142_k1
	reaction_142: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r143_k1
	reaction_143: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r144_k1,r144_k2
	reaction_144: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~0,ras) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r145_k1,r145_k2
	reaction_145: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r146_k1,r146_k2
	reaction_146: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r147_k1
	reaction_147: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r148_k1
	reaction_148: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r149_k1,r149_k2
	reaction_149: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r150_k1,r150_k2
	reaction_150: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r151_k1,r151_k2
	reaction_151: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r152_k1
	reaction_152: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r153_k1
	reaction_153: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r154_k1,r154_k2
	reaction_154: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Ras(GDPmod~0,GTPmod~GTP,egfr,raf,rasgap,rhogef) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r155_k1,r155_k2
	reaction_155: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r156_k1,r156_k2
	reaction_156: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r157_k1
	reaction_157: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r158_k1
	reaction_158: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r159_k1,r159_k2
	reaction_159: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r160_k1,r160_k2
	reaction_160: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r161_k1
	reaction_161: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r162_k1
	reaction_162: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r163_k1
	reaction_163: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r164_k1,r164_k2
	reaction_164: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r165_k1
	reaction_165: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r166_k1
	reaction_166: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras!46,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Ras(GDPmod~0,GTPmod~GTP,egfr!46,raf,rasgap,rhogef).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r167_k1
	reaction_167: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r168_k1,r168_k2
	reaction_168: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r169_k1,r169_k2
	reaction_169: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r170_k1
	reaction_170: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r171_k1
	reaction_171: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r172_k1,r172_k2
	reaction_172: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf,ras,rho,rhogtp).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Raf(akt,mek,mekk1abcdef,p2mod~0,pase,pmod~P,ras) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r173_k1,r173_k2
	reaction_173: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~0,pmod~0,pp2a,raf) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r174_k1,r174_k2
	reaction_174: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r175_k1
	reaction_175: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r176_k1
	reaction_176: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~P,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + MEK(erk,mekk1abcdef,p2mod~P,pmod~P,pp2a,raf) r177_k1,r177_k2
	reaction_177: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r178_k1,r178_k2
	reaction_178: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r179_k1,r179_k2
	reaction_179: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r180_k1,r180_k2
	reaction_180: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef,rhogap,rhogdi,rhogef,rok) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~0,pmod~0,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r181_k1,r181_k2
	reaction_181: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r182_k1,r182_k2
	reaction_182: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r183_k1
	reaction_183: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r184_k1
	reaction_184: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r185_k1
	reaction_185: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r186_k1,r186_k2
	reaction_186: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r187_k1
	reaction_187: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r188_k1
	reaction_188: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~P,p3mod~P,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf,ras,rho,rhogtp).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho,rhogtp).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r189_k1
	reaction_189: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r190_k1,r190_k2
	reaction_190: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r191_k1
	reaction_191: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~P,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r192_k1
	reaction_192: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~P,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r193_k1
	reaction_193: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~0,pmod~0,rok,sos) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r194_k1,r194_k2
	reaction_194: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~0,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r195_k1
	reaction_195: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~0,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~P,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) r196_k1
	reaction_196: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk!52,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).ERK(mek,mekk1abcdef!52,mkp3,p2mod~P,pmod~P,rok,sos).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + ERK(mek,mekk1abcdef,mkp3,p2mod~P,pmod~P,rok,sos) r197_k1
	reaction_197: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~P,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r198_k1,r198_k2
	reaction_198: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGAP(egfr,pmod~P,rho,src) r199_k1
	reaction_199: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~P,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).EGF(egfr!3).EGF(egfr!35) r200_k1,r200_k2
	reaction_200: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek!45,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).MEK(erk,mekk1abcdef!45,p2mod~P,pmod~P,pp2a,raf).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGAP(egfr,pmod~P,rho,src) r201_k1
	reaction_201: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~P,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) r202_k1,r202_k2
	reaction_202: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc!37,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc!31,sos).Shc(egfr!37,grb2!31,pmod~P,shp).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGAP(egfr,pmod~P,rho,src) r203_k1
	reaction_203: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap,rhogdi,rhogef,rok).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + RhoGAP(egfr,pmod~P,rho,src) <-> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).EGF(egfr!3).EGF(egfr!35) r204_k1,r204_k2
	reaction_204: EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap!49,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho!51,rhogtp).Rho(GDPmod~0,GTPmod~GTP,mekk1abcdef!51,rhogap!28,rhogdi,rhogef,rok).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).RhoGAP(egfr!49,pmod~P,rho!28,src).EGF(egfr!3).EGF(egfr!35) -> EGFR(Pro_mod~0,cbl_cin85,egf!3,egfr!34,epn,grb2!40,p2mod~0,p3mod~0,pi3k,pmod~P,ras,rasgap,rhogap,rhogef,shc,shp,src).EGFR(Pro_mod~0,cbl_cin85,egf!35,egfr!34,epn,grb2,p2mod~0,p3mod~0,pi3k,pmod~0,ras,rasgap,rhogap,rhogef,shc,shp,src).MEKK1abcdef(erk,grb2!5,mek,raf!44,ras,rho,rhogtp).Raf(akt,mek,mekk1abcdef!44,p2mod~0,pase,pmod~0,ras).Grb2(egfr!40,mekk1abcdef!5,shc,sos).EGF(egfr!3).EGF(egfr!35) + Rho(GDPmod~GDP,GTPmod~0,mekk1abcdef,rhogap,rhogdi,rhogef,rok) + RhoGAP(egfr,pmod~P,rho,src) r205_k1
end reaction rules
end model
