###
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007173']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000453', 'http://identifiers.org/biomodels.db/MODEL1304020001']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@creatorEmail:'viji@ebi.ac.uk'
#@notes:'This is an atomized translation of an SBML model created on 30/09/2015. The original model has 109 molecules and 117 reactions. The translated model has 24 molecules and 117 rules'
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000048', 'http://identifiers.org/biomodels.db/BIOMD0000000049', 'http://identifiers.org/biomodels.db/BIOMD0000000205', 'http://identifiers.org/pubmed/16687399', 'http://identifiers.org/pubmed/14751248', 'http://identifiers.org/pubmed/20459599', 'http://identifiers.org/biomodels.db/BIOMD0000000094', 'http://identifiers.org/biomodels.db/BIOMD0000000093', 'http://identifiers.org/biomodels.db/BIOMD0000000009', 'http://identifiers.org/biomodels.db/BIOMD0000000019']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23133538']
#@creatorName:'Chelliah Vijayalakshmi'
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:3908', 'http://identifiers.org/mamo/MAMO_0000046']
###
begin model
begin parameters
	r1_mw575f7f49_3663_47f1_b492_5b92c1c4345d 100.000000
	r1_mw53c64fd3_9a1c_4947_a734_74a73554964c 0.003800
	r2_mw8cfaf07f_dabe_45de_93cc_ef2c7fd31104 10.000000
	r2_mwab52aceb_4b19_4317_b2da_97ccbb973dab 0.020000
	r3_mw4004c2ca_d3cb_488e_bb79_1f4e40f0b15a 0.240000
	r3_mwe49b9910_4a74_4658_9b34_ce41c0d89825 13.000000
	r4_mwf1697f55_a3f4_4fb6_ae1d_f96f09ad1daa 90.000000
	r4_mw880a5942_7549_4466_bd19_0e1768a3a533 0.600000
	r5_mw7e889122_d26c_4d09_bae4_d313b992dc8e 3.114000
	r5_mwff6f49f7_268a_4f08_8d36_3ad8449d7472 0.200000
	r6_mwe645e76e_bb00_4c22_b25e_a2e77a6aada2 0.583800
	r7_mwb0744746_88a2_488e_a483_266747a044c6 0.266100
	r8_mw9e24066c_51a5_4c7a_af7c_4656155a4eb0 4.481000
	r8_mwab1ef4d4_2acc_4fa2_b07c_fac51fb7bfaf 0.300000
	r9_mwc4824ff0_2b51_4d66_ad48_1145f670a6e1 3.114000
	r9_mw0f1d282f_1c6b_455c_8254_3760632c6ecc 0.200000
	r10_mw0aa92e25_f9aa_461e_92b8_23b1b5b3ab92 0.266100
	r11_mw2a4ed8a2_fce4_44a4_adb9_edc24a06b4e1 0.005000
	r12_mwe879a9ac_4b8d_4c9a_a157_a3751761cf63 3.000000
	r12_mwa18578d7_236f_4939_baca_52259e38fe15 0.100000
	r13_mw289fed85_e6ee_43e6_a69f_77b5f487a452 10.000000
	r13_mw8768b5c7_b227_4825_aa55_a525b0d915c2 1.000000
	r14_mwd12a67b3_6d98_40e9_a54b_282a577498eb 2.661000
	r15_mw6ac313e2_e8a9_42a9_b13a_27e55c1012a2 10.000000
	r15_mw93f832d7_eefb_43dd_853c_a0d7a76023cf 0.021400
	r16_mwbb727dc5_30e8_45f4_9d15_3b34be5c1e93 0.100000
	r16_mw7ae1ee96_563e_4684_bc9a_8f4ef373620e 0.001500
	r17_mwbc5340b6_06b7_4081_bd0c_e7a397f06a92 10.000000
	r17_mw0df80c0e_c32b_4f90_99bd_e8f90e4c8109 0.045000
	r18_mwc585e0e4_b7e7_4290_8a6d_10fcd9759a2d 3.000000
	r18_mwf44d37d0_fe7f_4e47_bf10_1e734fbc3391 0.050000
	r19_mw3d564c3c_aa54_4c16_90be_662cfcbf8bc8 10.000000
	r19_mw371642bb_3836_4ded_93a5_68fa9b464896 1.000000
	r20_mw736e4a7b_4a25_4d32_b96b_b088e3bd41e7 2.661000
	r21_mw084cd67b_f328_48a7_8e16_1d6256c8c137 10.000000
	r21_mw43f177dc_f522_4dd1_b8e5_21b2b8fdfdba 0.060000
	r22_mwfa6a58ab_0ca5_4c05_92b0_870593ac135d 2.734000
	r22_mwb9547c37_09b7_4258_95ab_8039d4088298 0.025000
	r23_mw7e09242b_bd80_4af0_90c8_e0cddace89fe 202.900000
	r23_mw2dfc8a19_1792_4e12_af38_8bfbda31a577 0.180000
	r24_mw553c0b3c_af7f_4309_8c61_0f1e2c32347c 0.000167
	r25_mwfc146e94_8070_4727_8416_fb55829068cb 0.143400
	r26_mw26688d02_8ab9_4123_89c4_022b981cb72c 0.143400
	r27_mw5639395a_a5cd_46dd_81b8_30fe72400a2e 202.900000
	r27_mw9cc637fe_d9ca_47d2_a4dc_66009d458094 0.180000
	r28_mw19173345_925d_427b_8658_add0978e5931 2.854000
	r28_mw9f6790d7_19ce_41d9_b4de_a1658c047501 0.960000
	r29_mw23e16d40_acbb_4658_a336_be5d0b0dd86a 7.760000
	r30_mw10c97b8e_72aa_4f56_b3b9_c94baad7e213 0.100000
	r30_mw0b6eb5f7_b133_4b3d_bf15_9fd6c2e9332d 0.010000
	r31_mwe483687f_b591_4c42_9abc_7ea9f47470bf 2.845000
	r31_mwcf964aba_9db6_46c5_b687_beafc5d89169 0.960000
	r32_mwb881f20a_cf8a_493a_aa84_59ee90f26dd9 7.760000
	r33_mwb4c6ed27_c7ec_438f_bafd_4a09a9f356f1 3.114000
	r33_mwba77a9ba_078d_4ec6_a8b8_d7042a2cefe7 0.200000
	r34_mwe1743f7b_ca2c_47d4_91d7_aed2748d98c5 2.661000
	r35_mw9f1dbbe6_8aa3_4180_bcea_04343649d7ba 1.750000
	r35_mwdf20ff60_f0b7_4c2a_b393_586ec1337e67 0.050000
	r36_mw91f2ca92_9556_4fb8_ae12_0b72f3e3f261 0.762400
	r37_mw77c60377_28ae_4aad_b911_5768fc8b824f 4.000000
	r37_mw2eed2db0_ba78_435b_b2c8_ee91efdba1b4 0.018330
	r38_mw7e974605_8d9c_4250_8f69_072aab1f24f7 3.500000
	r39_mw11cdaca9_941c_4a59_ba2a_3bfeafb65aeb 4.000000
	r39_mw58c37b3e_91e7_445e_846e_77cd0b2320af 0.018330
	r40_mw432640ec_11b9_484d_ba26_415538ab9a10 2.900000
	r41_mw11bb74b8_d908_46f0_ac4d_06e8dd1aa5ae 3.000000
	r41_mwb44117f5_20b2_495e_adf3_3467cd119fd6 0.033000
	r42_mwa4c71b8d_fb74_465b_b76e_cec4e4c95484 16.000000
	r43_mwc40b3165_cc16_4f78_86b5_e34f2731dcbb 3.000000
	r43_mw8bff2fe0_b582_4020_8f05_83f14451b1c0 0.033000
	r44_mw3d07dc22_f821_49a5_9712_820ba9592353 5.700000
	r45_mwa8f70790_9f44_4548_988e_49d13016d2f1 71.700000
	r45_mwaad540b6_783e_4576_8862_ad522fd897db 0.200000
	r46_mwfbc395b5_05b8_4e27_9696_c3ba52edaf74 1.000000
	r47_mwc489f472_68ce_44e7_aad1_f8d2f6dda4ff 14.300000
	r47_mw56f1bdc0_66fd_47c0_806a_beeaf123e2f2 0.800000
	r48_mwa17c895f_29d8_4977_a99f_cf9bf6216785 0.058000
	r49_mwafd23622_952d_44b3_a437_4aa12422add7 0.250000
	r49_mw9d9a7d08_b19a_44f1_a806_151597049345 0.500000
	r50_mwac85fd83_4e73_43f1_9c42_01773349d50f 0.058000
	r51_mwd23d026b_c5b7_4742_aab9_b9beb18ec9bc 7.000000
	r51_mwf4c4d7a7_1498_4f6c_9d72_cd5cb012146c 0.600000
	r52_mwe3e5abe4_9f92_43eb_92e4_cea771f5bf14 0.270000
	r53_mwa617804d_95cc_4197_a39b_264a2c66b5a3 0.300000
	r54_mw254868f8_c9fb_493c_bc1d_807cc83c18e6 5.000000
	r54_mw78a41659_4abc_4614_9e83_38cbfe1c5262 0.500000
	r55_mwbc2119ce_ade3_4e2a_a3bc_a29cd77adf72 8.898000
	r55_mw54b0e5e9_710f_438e_a8d3_749c594667bc 1.000000
	r56_mw1ddaf9f4_dcab_4dc2_a6fa_5ce85b9d7a3a 0.042600
	r57_mw60892818_7ef4_4f65_8003_9700a708c66c 8.898000
	r57_mw6843d346_6e9f_43d5_97f6_1059f164aa16 1.000000
	r58_mwdaa378da_64fe_4ea4_b79d_c25733837b9f 0.042600
	r59_mw3f5e2165_9bb6_4ac3_992e_50943dd2ea05 0.002000
	r60_mwe49ede89_014e_40f2_acfd_0d1a0cd11fe7 0.005000
	r61_mw90873203_7a5d_4fca_a789_5e989ff0c999 0.200000
	r61_mw92d81b3b_fa59_4637_8540_8cb8482490d9 0.002500
	r62_mwcc2a950d_261b_4fd7_9c08_9f3c194ba09d 2.000000
	r62_mw1351daea_68be_404a_b7b0_105920ff3371 0.050000
	r63_mwc6b3c76f_af7b_488c_8751_28f1d9ab90a1 0.000500
	r64_mwf9c81339_e73a_45b5_a714_0854b718d44f 0.200000
	r64_mw587125c7_6092_4627_9cdd_2415b77a8307 0.002500
	r65_mwa575cf96_3d57_4222_ac71_bd17006ef035 2.000000
	r65_mwf7658bc6_acb6_411e_ae2c_9d8de7738d5f 0.050000
	r66_mwa137184a_0eb0_4bcb_971c_8e19231b2c07 0.000500
	r67_mwfa680314_051c_4b10_afc9_7e7fbee49e3f 0.200000
	r67_mw97b9ab43_02ae_4e42_a524_6b781633a255 0.000500
	r68_mwcc0d3fcd_9b9e_4390_b588_e57b57d89d22 2.000000
	r68_mw56f1be7e_e303_4a72_be17_5bd08e3eb1f2 0.050000
	r69_mw1decb177_5075_41f3_a348_ca13b8f4497e 0.000500
	r70_mw001b8124_b461_482a_8c8e_30bffc6718f7 14.000000
	r70_mw40eca7d6_80b2_4926_9c2f_330422db0814 0.174300
	r71_mwf3d00ca5_89dc_4693_92ec_a47db8150144 33.720000
	r71_mw91a84697_3231_4fa6_b6ff_d69ee86056dc 0.000337
	r72_mw901b5284_bdae_4040_b77d_10f1ec267f06 0.090000
	r72_mw94cadd24_0432_4f89_a6fc_96cb0475c44e 0.176400
	r73_mw688106ee_719d_4995_b1a0_faeefdb0af5a 1.000000
	r73_mw85c8ff7d_8d7c_4403_8a58_4996a3e6ac28 0.038000
	r74_mw4f6f44d9_408e_49b2_bedf_d34b2448725e 0.595000
	r75_mwd3e2533f_8d57_407c_834d_e0dde30b7f4a 0.000005
	r75_mwbd416b7b_f9b6_4464_b9e8_be4ac001d13d 0.000002
	r76_mw64664eb9_353a_4f1d_a8dc_e22bcb06e2c2 25.000000
	r76_mw0573df9d_f365_40b7_83d4_3846a05aefdc 3.500000
	r77_mw134431c3_e8e5_4375_89a0_2c51a03d65dd 25.000000
	r78_mw22510791_ef7e_4373_907c_9eecbc8adda7 10.000000
	r78_mwf59d397b_cfee_4a84_9279_134cc951db8c 1.000000
	r79_mwe2aded94_f2b5_4513_8670_71a86abf7968 10.000000
	r79_mw8d6eacb6_7184_4564_8cde_53e93add2146 1.000000
	r80_mw3c3648cb_6d56_4d9d_be47_129483778fd6 10.000000
	r81_mw98405e53_330b_4a64_a700_a62bb3f21426 0.100000
	r81_mw11f8de84_6639_486d_bf17_8f7021f54b66 0.005000
	r82_mw65e1222f_39ad_4a29_ae76_04b7d591af38 1.000000
	r82_mw11e520e6_b1f1_4802_af71_92a2bd9cb644 0.001000
	r83_mw6a4e035b_11a7_4155_9a78_cfba13631cb1 0.050000
	r84_mw6eebbe41_cf28_46e8_930c_26f50e08d602 0.001000
	r84_mw751c2663_d807_482f_991b_c8032cb6d996 0.001000
	r85_mwd2d0b340_bbdb_40bd_9eac_992a2a402b94 10.000000
	r85_mwb1b46773_a218_4f99_a000_a98fbc1275d7 1.000000
	r86_mw193f2553_1ab3_4b07_9b4b_201ee9e08c96 10.000000
	r86_mwb7292ff5_dd13_41aa_b9b8_2c0c75d35fb1 1.000000
	r87_mwf4069175_b898_4633_ac1e_20f44431c36a 0.050000
	r88_mw6d852e8c_c64a_4926_80c4_781a9c04b20e 0.001000
	r88_mw4d614bfc_3e20_450e_8890_6326afd0a0d7 0.001000
	r89_mw3676a900_b098_4a74_a511_e15984ca0cd2 10.000000
	r89_mwf68a0726_94b5_4be1_933f_1ac48053601d 1.000000
	r90_mwb4f0353c_d140_44cc_ab75_566fcc2909c5 0.050000
	r91_mw6165953d_ce44_4b21_a18a_c401c04993f1 0.001000
	r91_mw99a30aef_212a_4577_bcfd_8c5764057cca 0.001000
	r92_mw94b0216f_3353_4b36_b9b7_fd34a0510b08 0.100000
	r92_mw2034bbe7_27cc_410c_9870_1f8a5986dfa5 0.200000
	r93_mw0cea56f3_1cdb_410e_a5a4_f3635ba5c94b 1.000000
	r94_mw50a0e884_a88c_46a7_b985_788868bc1029 5.500000
	r94_mw2c88e0e2_e9c3_4e4c_bb2e_b0cd1f6420f4 11.740000
	r95_mw95e2190d_8e39_419b_ad26_7cc141f7b87b 0.400000
	r96_mw76d68ace_272d_4178_bba2_74dfdf260c70 5.000000
	r96_mwe37b936f_7781_4a01_b59b_96bd7db0c49e 0.500000
	r97_mwb6701ead_d3f2_4eb3_8b08_341cea49a4b2 1.000000
	r97_mwa5016035_3f9f_44fc_9f69_1d7a0155eb36 0.200000
	r98_mw26164d03_adda_4a21_b5ac_59e1d5a8d8ab 0.003000
	r99_mw9fe16c2b_7271_4e4f_b6de_c149721a3198 20.000000
	r99_mw74ea5b55_ead0_4b6f_8da0_fd1dcf7e231d 0.100000
	r100_mw8cbe6595_6f16_4704_afe2_0dd043a175fa 1.000000
	r100_mw21d22acd_ddd4_4794_9700_52201984f75b 0.200000
	r101_mw81384973_14a0_4498_ab21_f70666d46d7f 0.003000
	r102_mw9f1a7f64_0b37_42df_9dd5_e1a44efdcbba 0.000200
	r102_mw366e6f17_4081_4cdc_9fa5_0aeb354d692c 0.200000
	r103_mw1df2caba_8e41_4fe5_a1b5_7777eb98ed1c 0.005000
	r104_mw5a798f7a_b4eb_4a27_b413_4ff3956b90e9 20.000000
	r104_mw54178365_18c1_47e0_94ee_6b96582c52ef 0.100000
	r105_mw1ff4e75e_fce5_4a7a_907b_05df4981f80b 1.000000
	r105_mw8b269d52_eda9_4dd1_8616_ebcf29c971fa 0.200000
	r106_mw90b25c4b_ad1a_4ee5_ae20_c60451484516 0.005000
	r107_mwa0806e7a_a90d_4187_9c37_6d9ea569a447 0.000200
	r107_mw95cb9071_56e2_447d_b7c7_59ac96baa623 0.200000
	r108_mwba545ecf_c7d4_4a6c_8c47_9e91f052d5a9 1.000000
	r108_mw01c5ceef_57a1_4baa_b2cd_fd39e9588a10 0.200000
	r109_mw7aba6db3_c7ec_4192_bb5e_0ac4b466c1a5 0.005000
	r110_mw31eb851a_c381_419d_b694_f158b7f5cfb6 0.050000
	r111_mwa5567196_f821_479b_973b_f0967a3eb761 17.000000
	r112_mw693f22fe_7af9_4af8_a026_faace261163b 0.200000
	r112_mw4e34dd0b_2ef1_4805_ba4a_2c859bdcb5e2 0.005000
	r113_mw6ccc709f_7522_4378_9862_9182b326736f 2.000000
	r113_mw52cfcb04_5483_4dca_a06f_d1132baa2665 0.050000
	r114_mw74529c03_0e18_4c1b_8704_a9816a9ea3d0 0.000500
	r115_mwe5304629_3bf5_4912_b431_190349f23010 0.200000
	r115_mw53f2f6aa_0608_4b23_bfe6_f27b10b55fe5 0.005000
	r116_mwe6f05aa0_13b8_4d76_aaf0_680cc578302a 2.000000
	r116_mw7018cad1_4fc0_4bbe_aa44_7fa2e01b424c 0.050000
	r117_mwce8da2e5_1143_4235_805b_f7725e8473ec 0.000500
end parameters
begin compartments
	mw1637dd35_5f09_4a8d_bb7f_58717cdf1612  3  1.0
end compartments
begin molecule types
	EGF(egfr,pmod~P~0~PP)
	EGFR(Promod~PRO~0,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3)
	cbl(egfr)
	Shc(egfr,pmod~P~0,shp)
	SHP(_2mod~2~0,egfr,shc)
	Grb2(egfr,sos)
	SOS(grb2,pmod~P~0)
	Ras_GAP(egfr,ras)
	Raf1(Raf1activemod~Raf1active~0,mek,pase,pmod~P~0,ras)
	MEK(erk,pase,pmod~P~0~PP,raf1)
	ERK(egfr,mek,pase3,pmod~P~0~PP)
	Pase(_2mod~2~0,mek,raf1)
	Pase3(erk)
	EPn(egfr)
	PI3K(egfr,pip3,pmod~P~0,tp4)
	TP4(pi3k)
	PIP3(_2mod~2~0,akt,pi3k)
	Akt(pAkt_totalmod~pAkt_total~0,pdk1,pip3,pmod~P~0,takt)
	PDK1(akt)
	Takt(akt)
	PP1(stat3)
	PP2(stat3)
	STAT3(cmod~0~C,egfr,nmod~0~N,pmod~P~0,pp1,pp2,stat3)
	Ras(Ras_GDPmod~Ras_GDP~0,Ras_GTPmod~Ras_GTP~0,egfr,raf1,ras_gap)
end molecule types
begin seed species
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGF(egfr,pmod~0) 0.0081967 #EGF #mwe2fff28d_182c_4a1c_9882_f17774c0958a
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) 1.0 #EGFR #mw93907b2d_53db_4080_9e3f_3eb304441ab9
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:cbl(egfr) 0.8 #cbl #mw19122f7d_f92e_4dc0_922f_6b681db65b0b
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Shc(egfr,pmod~0,shp) 1.0 #Shc #mw3c2e1b43_29ca_491a_93e9_c723a993d6fb
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SHP(_2mod~0,egfr,shc) 0.2 #SHP #mwe57c3282_5935_405c_8c0b_7fadb7a5de17
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Grb2(egfr,sos) 1.0 #Grb2 #mwf430a579_ecbf_48ba_80c2_06e455808f2a
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SOS(grb2,pmod~0) 0.3 #SOS #mw9dcaa655_a755_426e_a3fa_1ad7c3c45575
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) 0.3 #Ras_GDP #mw8f5a7b5c_ca4c_4a4c_85b1_e5d640c426bf
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Ras_GAP(egfr,ras) 0.1 #Ras_GAP #mw7cff9a0e_094d_498e_bf7f_7b162c61d63a
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~0,mek,pase,pmod~0,ras) 0.5 #Raf1 #mw66ac98c4_7e7b_4071_954d_43eb17584220
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk,pase,pmod~0,raf1) 0.68 #MEK #mw0834731b_0477_4217_a53b_30cef851191b
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek,pase3,pmod~0) 0.8 #ERK #mw7e23b961_186b_47a0_a8b5_5e9957766792
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Pase(_2mod~0,mek,raf1) 0.5 #Pase #mwbaaeb210_4806_4076_9d60_219f4ed945b6
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Pase(_2mod~2,mek,raf1) 0.02 #Pase2 #mwf9e2a044_7774_400b_a74e_a111b4a21f30
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Pase3(erk) 0.002 #Pase3 #mwd087f76b_65dc_47f1_ba21_c43774457686
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~PRO,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) 1.0 #ProEGFR #mw0a0ca6ba_cb28_44c7_a0c0_1593cb720966
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EPn(egfr) 0.5 #EPn #mwb2366216_0b3c_4f28_8303_fec92c68dd57
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PI3K(egfr,pip3,pmod~0,tp4) 0.4 #PI3K #mw2ba1db9a_4483_44fa_a3a2_b4a5ea66898c
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:TP4(pi3k) 0.2 #TP4 #mwfc4a9c3d_3ebb_4033_8b7d_f4d7613d2078
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PIP3(_2mod~2,akt,pi3k) 0.5 #PIP2 #mwb561d9f3_a9ed_4bdb_8d40_87be5cc3237a
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt) 0.2 #Akt #mwcef73e0e_d195_4077_ae71_723664ee1602
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PDK1(akt) 0.1 #PDK1 #mw6e01967b_3e2a_433d_bec6_9f9cf3ba243c
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Takt(akt) 0.1 #Takt #mw11a8b702_b8ac_4513_b4aa_063e51089812
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) 2.0 #STAT3c #mw13abe2a6_9905_40e5_8c23_3fc8834b572a
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PP1(stat3) 0.5 #PP1 #mwcea1f1c1_2f85_4af1_98ea_ef14cf580c09
	@mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PP2(stat3) 0.6 #PP2 #mw0e1be972_fded_4bff_a93d_091ec942485f
end seed species
begin observables
	Species EGF_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGF(egfr,pmod~0) #EGF
	Species EGFR_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) #EGFR
	Species EGF_EGFR_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0) #EGF-EGFR
	Species EGF_EGFR2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) #EGF-EGFR2
	Species pEGF_EGFR2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2
	Species cbl_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:cbl(egfr) #cbl
	Species Shc_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Shc(egfr,pmod~0,shp) #Shc
	Species pEGF_EGFR2_Shc_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!21,shp,stat3).Shc(egfr!21,pmod~0,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-Shc
	Species SHP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SHP(_2mod~0,egfr,shc) #SHP
	Species pEGF_EGFR2_SHP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp!25,stat3).SHP(_2mod~2,egfr!25,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-SHP2
	Species pEGF_EGFR2_pShc_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-pShc
	Species pShc_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Shc(egfr,pmod~P,shp) #pShc
	Species pShc_SHP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SHP(_2mod~0,egfr,shc!5).Shc(egfr,pmod~P,shp!5) #pShc-SHP2
	Species Grb2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Grb2(egfr,sos) #Grb2
	Species pEGF_EGFR2_pShc_Grb2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) #pEGF-EGFR2-pShc-Grb2
	Species pEGF_EGFR2_pShc_Grb2_SHP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc!5).Shc(egfr!26,pmod~P,shp!5).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) #pEGF-EGFR2-pShc-Grb2-SHP2
	Species SOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SOS(grb2,pmod~0) #SOS
	Species pEGF_EGFR2_pShc_Grb2_SOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-pShc-Grb2-SOS
	Species pEGF_EGFR2_pShc_Grb2_SOS_cbl_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) #pEGF-EGFR2-pShc-Grb2-SOS-cbl
	Species Grb2_SOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SOS(grb2!2,pmod~0).Grb2(egfr,sos!2) #Grb2-SOS
	Species pEGF_EGFR2_Grb2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2!22,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!22,sos) #pEGF-EGFR2-Grb2
	Species pEGF_EGFR2_Grb2_SHP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) #pEGF-EGFR2-Grb2-SHP2
	Species pEGF_EGFR2_Grb2_SOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-Grb2-SOS
	Species pEGF_EGFR2_Grb2_SOS_cbl_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) #pEGF-EGFR2-Grb2-SOS-cbl
	Species Ras_GDP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) #Ras-GDP
	Species pEGF_EGFR2_pShc_Grb2_SOS_Ras_GDP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras!33,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr!33,raf1,ras_gap).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-pShc-Grb2-SOS-Ras-GDP
	Species Ras_GTP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) #Ras-GTP
	Species pEGF_EGFR2_Grb2_SOS_Ras_GDP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras!33,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr!33,raf1,ras_gap).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-Grb2-SOS-Ras-GDP
	Species Ras_GAP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Ras_GAP(egfr,ras) #Ras-GAP
	Species Ras_GTP_Ras_GAP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap!9).Ras_GAP(egfr,ras!9) #Ras-GTP-Ras-GAP
	Species pEGF_EGFR2_Ras_GAP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!24,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!24,ras) #pEGF-EGFR2-Ras-GAP
	Species pEGF_EGFR2_Ras_GAP_Ras_GTP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!32,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap!9).EGF(egfr!3,pmod~P).Ras_GAP(egfr!32,ras!9).EGF(egfr!18,pmod~0) #pEGF-EGFR2-Ras-GAP-Ras-GTP
	Species pEGF_EGFR2_Ras_GAP_SHP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!32,shc,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!32,ras) #pEGF-EGFR2-Ras-GAP-SHP2
	Species Raf1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~0,mek,pase,pmod~0,ras) #Raf1
	Species Raf1_Ras_GTP_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~0,mek,pase,pmod~0,ras!7).Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1!7,ras_gap) #Raf1-Ras-GTP
	Species Raf1active_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) #Raf1active
	Species MEK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk,pase,pmod~0,raf1) #MEK
	Species Raf1active_MEK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~Raf1active,mek!8,pase,pmod~0,ras).MEK(erk,pase,pmod~0,raf1!8) #Raf1active-MEK
	Species pMEK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk,pase,pmod~P,raf1) #pMEK
	Species Raf1active_pMEK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~Raf1active,mek!8,pase,pmod~0,ras).MEK(erk,pase,pmod~P,raf1!8) #Raf1active-pMEK
	Species ppMEK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk,pase,pmod~PP,raf1) #ppMEK
	Species ERK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek,pase3,pmod~0) #ERK
	Species ppMEK_ERK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek!11,pase3,pmod~0).MEK(erk!11,pase,pmod~PP,raf1) #ppMEK-ERK
	Species pERK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek,pase3,pmod~P) #pERK
	Species ppMEK_pERK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk!11,pase,pmod~PP,raf1).ERK(egfr,mek!11,pase3,pmod~P) #ppMEK-pERK
	Species ppERK_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek,pase3,pmod~PP) #ppERK
	Species Pase_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Pase(_2mod~0,mek,raf1) #Pase
	Species Raf1active_Pase_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~Raf1active,mek,pase!10,pmod~0,ras).Pase(_2mod~0,mek,raf1!10) #Raf1active-Pase
	Species Pase2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Pase(_2mod~2,mek,raf1) #Pase2
	Species ppMEK_Pase2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk,pase!14,pmod~PP,raf1).Pase(_2mod~2,mek!14,raf1) #ppMEK-Pase2
	Species pMEK_Pase2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:MEK(erk,pase!14,pmod~P,raf1).Pase(_2mod~2,mek!14,raf1) #pMEK-Pase2
	Species Pase3_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Pase3(erk) #Pase3
	Species pERK_Pase3_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek,pase3!6,pmod~P).Pase3(erk!6) #pERK-Pase3
	Species ppERK_Pase3_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:ERK(egfr,mek,pase3!6,pmod~PP).Pase3(erk!6) #ppERK-Pase3
	Species ppERK_pEGF_EGFR2_pShc_Grb2_SOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk!34,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).ERK(egfr!34,mek,pase3,pmod~PP).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #ppERK-pEGF-EGFR2-pShc-Grb2-SOS
	Species pSOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:SOS(grb2,pmod~P) #pSOS
	Species ppERK_pEGF_EGFR2_Grb2_SOS_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk!34,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).ERK(egfr!34,mek,pase3,pmod~PP).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #ppERK-pEGF-EGFR2-Grb2-SOS
	Species ProEGFR_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~PRO,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) #ProEGFR
	Species pEGF_EGFR2_pShc_Grb2_SOS_cbl_EPn_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) #pEGF-EGFR2-pShc-Grb2-SOS-cbl-EPn
	Species EPn_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EPn(egfr) #EPn
	Species pEGF_EGFR2_Grb2_SOS_cbl_EPn_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) #pEGF-EGFR2-Grb2-SOS-cbl-EPn
	Species pEGF_EGFR2_cbl_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl!20,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!20) #pEGF-EGFR2-cbl
	Species pEGF_EGFR2_cbl_EPn_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) #pEGF-EGFR2-cbl-EPn
	Species PI3K_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PI3K(egfr,pip3,pmod~0,tp4) #PI3K
	Species pEGF_EGFR2_PI3K_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-PI3K
	Species pEGF_EGFR2_pPI3K_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~PP).EGF(egfr!18,pmod~0) #pEGF-EGFR2-pPI3K
	Species pPI3K_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PI3K(egfr,pip3,pmod~P,tp4) #pPI3K
	Species TP4_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:TP4(pi3k) #TP4
	Species TP4_pPI3K_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PI3K(egfr,pip3,pmod~P,tp4!4).TP4(pi3k!4) #TP4-pPI3K
	Species TP4_PI3K_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PI3K(egfr,pip3,pmod~0,tp4!4).TP4(pi3k!4) #TP4-PI3K
	Species PIP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PIP3(_2mod~2,akt,pi3k) #PIP2
	Species pPI3K_PIP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PI3K(egfr,pip3!13,pmod~P,tp4).PIP3(_2mod~2,akt,pi3k!13) #pPI3K-PIP2
	Species PIP3_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PIP3(_2mod~0,akt,pi3k) #PIP3
	Species Akt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt) #Akt
	Species Aktm_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k) #Aktm
	Species PDK1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PDK1(akt) #PDK1
	Species Aktm_PDK1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) #Aktm-PDK1
	Species pAktm_PDK1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) #pAktm-PDK1
	Species pAktm_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k) #pAktm
	Species pAkt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3,pmod~P,takt) #pAkt
	Species pAkt_Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3,pmod~P,takt!1).Takt(akt!1) #pAkt-Takt
	Species Akt_Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt!1).Takt(akt!1) #Akt-Takt
	Species Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Takt(akt) #Takt
	Species pAktm_Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1) #pAktm-Takt
	Species Aktm_Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1) #Aktm-Takt
	Species pAktm_PDK1_Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1).PDK1(akt!12) #pAktm-PDK1-Takt
	Species Aktm_PDK1_Takt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1).PDK1(akt!12) #Aktm-PDK1-Takt
	Species pAkt_total_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Akt(pAkt_totalmod~pAkt_total,pdk1,pip3,pmod~0,takt) #pAkt_total
	Species pRaf1active_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:Raf1(Raf1activemod~Raf1active,mek,pase,pmod~P,ras) #pRaf1active
	Species STAT3c_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) #STAT3c
	Species pEGF_EGFR2_STAT3c_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-STAT3c
	Species pSTAT3c_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) #pSTAT3c
	Species pEGF_EGFR2_pSTAT3c_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~P,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) #pEGF-EGFR2-pSTAT3c
	Species PP1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PP1(stat3) #PP1
	Species pSTAT3c_PP1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1!15,pp2,stat3).PP1(stat3!15) #pSTAT3c-PP1
	Species pSTAT3c_pSTAT3c_PP1_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1!15,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).PP1(stat3!15) #pSTAT3c-pSTAT3c-PP1
	Species pSTAT3c_pSTAT3c_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17) #pSTAT3c-pSTAT3c
	Species STAT3c_pSTAT3c_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3!17) #STAT3c-pSTAT3c
	Species pSTAT3n_pSTAT3n_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17) #pSTAT3n-pSTAT3n
	Species pSTAT3n_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3) #pSTAT3n
	Species PP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:PP2(stat3) #PP2
	Species pSTAT3n_pSTAT3n_PP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2!16,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).PP2(stat3!16) #pSTAT3n-pSTAT3n-PP2
	Species STAT3n_pSTAT3n_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3!17) #STAT3n-pSTAT3n
	Species STAT3n_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3) #STAT3n
	Species pSTAT3n_PP2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2!16,stat3).PP2(stat3!16) #pSTAT3n-PP2
	Species pEGF_EGFR2_STAT3c_cbl_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) #pEGF-EGFR2-STAT3c-cbl
	Species pEGF_EGFR2_STAT3c_cbl_EPn_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) #pEGF-EGFR2-STAT3c-cbl-EPn
	Species pEGF_EGFR2_PI3K_cbl_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) #pEGF-EGFR2-PI3K-cbl
	Species pEGF_EGFR2_PI3K_cbl_EPn_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 @mw1637dd35_5f09_4a8d_bb7f_58717cdf1612:EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) #pEGF-EGFR2-PI3K-cbl-EPn
end observables
begin functions
	functionRate2() = (0.24 / (13.0 + EGF_EGFR2_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612))/2
	pAkt_total() = pAkt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 + pAktm_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612
	functionRate91() = 0.1 * (pAkt_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612 + pAktm_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612) / (0.2 + Raf1active_mw1637dd35_5f09_4a8d_bb7f_58717cdf1612)
end functions
begin reaction rules
	mwa67e40c1_693d_4214_adc8_b2f2b71cef12: EGF(egfr,pmod~0) + EGFR(Promod~0,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) <-> EGFR(Promod~0,cbl,egf!3,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0) r1_mw575f7f49_3663_47f1_b492_5b92c1c4345d,r1_mw53c64fd3_9a1c_4947_a734_74a73554964c #Modifiers(mwe2fff28d_182c_4a1c_9882_f17774c0958a, mw93907b2d_53db_4080_9e3f_3eb304441ab9, mw7eacabf9_d68c_491a_aba2_ec0809a8ecc8)
	mw877cd1e3_b48b_42e8_ab23_682dd893fd9d: EGFR(Promod~0,cbl,egf!3,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0) + EGFR(Promod~0,cbl,egf!3,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) r2_mw8cfaf07f_dabe_45de_93cc_ef2c7fd31104 * 2,r2_mwab52aceb_4b19_4317_b2da_97ccbb973dab #Modifiers(mw7eacabf9_d68c_491a_aba2_ec0809a8ecc8, mwa8f2e7b2_0927_4ab4_a817_dddc43bb4fa3)
	mw413c6d45_ab23_4d3e_87b3_a8ed4629b923: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) functionRate2() #Modifiers(mwa8f2e7b2_0927_4ab4_a817_dddc43bb4fa3)
	mwf61e086d_0345_4d4c_b91d_0b105e543d04: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Shc(egfr,pmod~0,shp) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!21,shp,stat3).Shc(egfr!21,pmod~0,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) (r4_mwf1697f55_a3f4_4fb6_ae1d_f96f09ad1daa)/2,r4_mw880a5942_7549_4466_bd19_0e1768a3a533 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw3c2e1b43_29ca_491a_93e9_c723a993d6fb, mw5198d3c2_879c_4f0d_b4f8_cd40efe0b1cf)
	mw91f49311_efdc_47c6_b8b8_a619e042d644: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + SHP(_2mod~0,egfr,shc) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp!25,stat3).SHP(_2mod~2,egfr!25,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) (r5_mw7e889122_d26c_4d09_bae4_d313b992dc8e)/2,r5_mwff6f49f7_268a_4f08_8d36_3ad8449d7472 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mwe57c3282_5935_405c_8c0b_7fadb7a5de17, mw954e8fcb_ac0a_459d_8878_f19080208a17)
	mw974c39f5_b82e_44b3_abec_7a724f46c526: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!21,shp,stat3).Shc(egfr!21,pmod~0,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r6_mwe645e76e_bb00_4c22_b25e_a2e77a6aada2 #Modifiers(mw5198d3c2_879c_4f0d_b4f8_cd40efe0b1cf)
	mw9544e67b_b6d0_4941_b7e0_ecd4f400a335: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp!25,stat3).SHP(_2mod~2,egfr!25,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) + SHP(_2mod~0,egfr,shc) r7_mwb0744746_88a2_488e_a483_266747a044c6 #Modifiers(mw954e8fcb_ac0a_459d_8878_f19080208a17)
	mw486c5261_3d03_4589_a1e9_978b62ad2dfe: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Shc(egfr,pmod~P,shp) r8_mw9e24066c_51a5_4c7a_af7c_4656155a4eb0,(r8_mwab1ef4d4_2acc_4fa2_b07c_fac51fb7bfaf)/2 #Modifiers(mwa98802cb_c977_4fe0_9e67_5000904c2c36, mwbfcf6773_1915_432c_b1d2_1f246094cc74, mwa0349407_8187_48fc_9e94_5698ccc4e06d)
	mw2cf8a809_63d8_4717_91fc_070516e6f3db: Shc(egfr,pmod~P,shp) + SHP(_2mod~0,egfr,shc) <-> SHP(_2mod~0,egfr,shc!5).Shc(egfr,pmod~P,shp!5) r9_mwc4824ff0_2b51_4d66_ad48_1145f670a6e1,r9_mw0f1d282f_1c6b_455c_8254_3760632c6ecc #Modifiers(mwa0349407_8187_48fc_9e94_5698ccc4e06d, mwe57c3282_5935_405c_8c0b_7fadb7a5de17, mwf9999977_6f0e_4e35_9b73_75587f3448e9)
	mweda6a945_fb5d_4d99_9958_11b2b2840308: SHP(_2mod~0,egfr,shc!5).Shc(egfr,pmod~P,shp!5) -> Shc(egfr,pmod~0,shp) + SHP(_2mod~0,egfr,shc) r10_mw0aa92e25_f9aa_461e_92b8_23b1b5b3ab92 #Modifiers(mwf9999977_6f0e_4e35_9b73_75587f3448e9)
	mwd4bf58ea_70c9_43ea_a831_1fcde130ba28: Shc(egfr,pmod~P,shp) -> Shc(egfr,pmod~0,shp) r11_mw2a4ed8a2_fce4_44a4_adb9_edc24a06b4e1 #Modifiers(mwa0349407_8187_48fc_9e94_5698ccc4e06d)
	mw4817365e_a33b_451f_bee1_de748377ede2: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Grb2(egfr,sos) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) r12_mwe879a9ac_4b8d_4c9a_a157_a3751761cf63,r12_mwa18578d7_236f_4939_baca_52259e38fe15 #Modifiers(mwa98802cb_c977_4fe0_9e67_5000904c2c36, mwf430a579_ecbf_48ba_80c2_06e455808f2a, mw504578d8_96c3_471f_8a7e_8c14e7535d3d)
	mw03998474_934b_4e4a_8c0c_ca359e402ac2: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) + SHP(_2mod~0,egfr,shc) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc!5).Shc(egfr!26,pmod~P,shp!5).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) r13_mw289fed85_e6ee_43e6_a69f_77b5f487a452,r13_mw8768b5c7_b227_4825_aa55_a525b0d915c2 #Modifiers(mw504578d8_96c3_471f_8a7e_8c14e7535d3d, mwe57c3282_5935_405c_8c0b_7fadb7a5de17, mw45ab688a_6467_4a3e_a779_2118fa84d69e)
	mw7bb43f0a_c87e_41ff_8a43_cdf45c8f05e6: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc!5).Shc(egfr!26,pmod~P,shp!5).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) + Shc(egfr,pmod~P,shp) + Grb2(egfr,sos) + SHP(_2mod~0,egfr,shc) r14_mwd12a67b3_6d98_40e9_a54b_282a577498eb #Modifiers(mw45ab688a_6467_4a3e_a779_2118fa84d69e)
	mwd9262331_e35a_4614_943a_89bcf8a492e3: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) + SOS(grb2,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r15_mw6ac313e2_e8a9_42a9_b13a_27e55c1012a2,r15_mw93f832d7_eefb_43dd_853c_a0d7a76023cf #Modifiers(mw504578d8_96c3_471f_8a7e_8c14e7535d3d, mw9dcaa655_a755_426e_a3fa_1ad7c3c45575, mwfbda4e09_0cbb_49bc_ae69_f88b7a79ed21)
	mwc5f121dc_d27d_4c3d_90f2_67d0adaf144a: Grb2(egfr,sos) + SOS(grb2,pmod~0) <-> SOS(grb2!2,pmod~0).Grb2(egfr,sos!2) r16_mwbb727dc5_30e8_45f4_9d15_3b34be5c1e93,r16_mw7ae1ee96_563e_4684_bc9a_8f4ef373620e #Modifiers(mwf430a579_ecbf_48ba_80c2_06e455808f2a, mw9dcaa655_a755_426e_a3fa_1ad7c3c45575, mw1093b3af_1864_4ba3_a541_6009a9921282)
	mw23a29b42_9813_4e46_b8ae_966e3215e6dc: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + SOS(grb2!2,pmod~0).Grb2(egfr,sos!2) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r17_mwbc5340b6_06b7_4081_bd0c_e7a397f06a92,r17_mw0df80c0e_c32b_4f90_99bd_e8f90e4c8109 #Modifiers(mwa98802cb_c977_4fe0_9e67_5000904c2c36, mw1093b3af_1864_4ba3_a541_6009a9921282, mwfbda4e09_0cbb_49bc_ae69_f88b7a79ed21)
	mw0e459167_515b_4c4d_8b67_bf0a5b3e9d61: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Grb2(egfr,sos) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2!22,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!22,sos) (r18_mwc585e0e4_b7e7_4290_8a6d_10fcd9759a2d)/2,r18_mwf44d37d0_fe7f_4e47_bf10_1e734fbc3391 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mwf430a579_ecbf_48ba_80c2_06e455808f2a, mwd9462e5b_a272_4b66_ab66_fde9266b1a43)
	mwc52e0f9b_1e0c_46ca_8d18_f05ef4a080cb: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2!22,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!22,sos) + SHP(_2mod~0,egfr,shc) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) r19_mw3d564c3c_aa54_4c16_90be_662cfcbf8bc8,r19_mw371642bb_3836_4ded_93a5_68fa9b464896 #Modifiers(mwd9462e5b_a272_4b66_ab66_fde9266b1a43, mwe57c3282_5935_405c_8c0b_7fadb7a5de17, mw925b938a_fe73_4664_ba6f_e72e57780891)
	mw4f89bf6c_8691_41a6_a1ac_13e6aa8c4b93: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!30,sos) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) + Grb2(egfr,sos) + SHP(_2mod~0,egfr,shc) r20_mw736e4a7b_4a25_4d32_b96b_b088e3bd41e7 #Modifiers(mw925b938a_fe73_4664_ba6f_e72e57780891)
	mw35f71989_f89b_4440_b1a4_ebc7b4cc18b2: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2!22,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Grb2(egfr!22,sos) + SOS(grb2,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r21_mw084cd67b_f328_48a7_8e16_1d6256c8c137,r21_mw43f177dc_f522_4dd1_b8e5_21b2b8fdfdba #Modifiers(mwd9462e5b_a272_4b66_ab66_fde9266b1a43, mw9dcaa655_a755_426e_a3fa_1ad7c3c45575, mwf8cc7834_bf4f_4ccd_8235_d0890badf0f6)
	mwd0d92dd4_81b7_4385_bfd7_5de82e193ecd: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + SOS(grb2!2,pmod~0).Grb2(egfr,sos!2) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) (r22_mwfa6a58ab_0ca5_4c05_92b0_870593ac135d)/2,r22_mwb9547c37_09b7_4258_95ab_8039d4088298 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw1093b3af_1864_4ba3_a541_6009a9921282, mwf8cc7834_bf4f_4ccd_8235_d0890badf0f6)
	mwbb77e3d6_6065_4344_9361_e30c03514f4e: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras!33,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr!33,raf1,ras_gap).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r23_mw7e09242b_bd80_4af0_90c8_e0cddace89fe,r23_mw2dfc8a19_1792_4e12_af38_8bfbda31a577 #Modifiers(mwfbda4e09_0cbb_49bc_ae69_f88b7a79ed21, mw8f5a7b5c_ca4c_4a4c_85b1_e5d640c426bf, mwf40d6176_abfc_4a30_886f_83a19fcffc48)
	mw921ee820_1dbb_4b5f_866c_87da620d8f89: Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) -> Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) r24_mw553c0b3c_af7f_4309_8c61_0f1e2c32347c #Modifiers(mwa54a9c38_c98b_45e5_8432_4119fb777e44)
	mw0bcfad86_59b9_42ff_bcb7_fbb44845049d: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras!33,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr!33,raf1,ras_gap).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) r25_mwfc146e94_8070_4727_8416_fb55829068cb #Modifiers(mwf40d6176_abfc_4a30_886f_83a19fcffc48)
	mwe9b50ac7_dac3_4eba_b1db_b3fd392d8fb7: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras!33,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr!33,raf1,ras_gap).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) r26_mw26688d02_8ab9_4123_89c4_022b981cb72c #Modifiers(mw28464aad_8013_4a23_ae09_a406954859a6)
	mw934c3638_603e_4ff0_a763_68f9405fa01f: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras!33,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr!33,raf1,ras_gap).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r27_mw5639395a_a5cd_46dd_81b8_30fe72400a2e,r27_mw9cc637fe_d9ca_47d2_a4dc_66009d458094 #Modifiers(mwf8cc7834_bf4f_4ccd_8235_d0890badf0f6, mw8f5a7b5c_ca4c_4a4c_85b1_e5d640c426bf, mw28464aad_8013_4a23_ae09_a406954859a6)
	mw3c617363_649b_4460_a694_36f7a3127a62: Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) + Ras_GAP(egfr,ras) <-> Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap!9).Ras_GAP(egfr,ras!9) r28_mw19173345_925d_427b_8658_add0978e5931,r28_mw9f6790d7_19ce_41d9_b4de_a1658c047501 #Modifiers(mwa54a9c38_c98b_45e5_8432_4119fb777e44, mw7cff9a0e_094d_498e_bf7f_7b162c61d63a, mwdf82303e_323f_4c51_a858_56a59233cd98)
	mwf31259aa_32b7_4104_be70_045297b9a512: Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap!9).Ras_GAP(egfr,ras!9) -> Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) + Ras_GAP(egfr,ras) r29_mw23e16d40_acbb_4658_a336_be5d0b0dd86a #Modifiers(mwdf82303e_323f_4c51_a858_56a59233cd98)
	mw0a51fbf0_409b_4b45_b4ac_0220af4c4e3c: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Ras_GAP(egfr,ras) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!24,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!24,ras) (r30_mw10c97b8e_72aa_4f56_b3b9_c94baad7e213)/2,r30_mw0b6eb5f7_b133_4b3d_bf15_9fd6c2e9332d #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw7cff9a0e_094d_498e_bf7f_7b162c61d63a, mwd39388fd_4f85_4d1c_b2a3_37857c595a2d)
	mw33baddbd_a23f_45bb_b126_0ba60bbf6c53: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!24,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!24,ras) + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!32,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap!9).EGF(egfr!3,pmod~P).Ras_GAP(egfr!32,ras!9).EGF(egfr!18,pmod~0) r31_mwe483687f_b591_4c42_9abc_7ea9f47470bf,r31_mwcf964aba_9db6_46c5_b687_beafc5d89169 #Modifiers(mwd39388fd_4f85_4d1c_b2a3_37857c595a2d, mwa54a9c38_c98b_45e5_8432_4119fb777e44, mwd7bf31ba_b05c_4c45_bb2f_6a2468a2a507)
	mw652570eb_c9d3_499b_b877_61d360b10980: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!32,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap!9).EGF(egfr!3,pmod~P).Ras_GAP(egfr!32,ras!9).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!24,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!24,ras) + Ras(Ras_GDPmod~Ras_GDP,Ras_GTPmod~0,egfr,raf1,ras_gap) r32_mwb881f20a_cf8a_493a_aa84_59ee90f26dd9 #Modifiers(mwd7bf31ba_b05c_4c45_bb2f_6a2468a2a507)
	mwc5aae1f8_52e4_4bcd_b044_3768f90b7b19: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!24,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!24,ras) + SHP(_2mod~0,egfr,shc) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!32,shc,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!32,ras) r33_mwb4c6ed27_c7ec_438f_bafd_4a09a9f356f1,r33_mwba77a9ba_078d_4ec6_a8b8_d7042a2cefe7 #Modifiers(mwd39388fd_4f85_4d1c_b2a3_37857c595a2d, mwe57c3282_5935_405c_8c0b_7fadb7a5de17, mwbf5cb039_b830_4282_aa22_a3dda6272ec1)
	mw642ac312_2ee7_4e66_8f3e_e2da2bb6412a: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap!32,shc,shp!31,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SHP(_2mod~2,egfr!31,shc).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).Ras_GAP(egfr!32,ras) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~0).EGF(egfr!18,pmod~0) + Ras_GAP(egfr,ras) + SHP(_2mod~0,egfr,shc) r34_mwe1743f7b_ca2c_47d4_91d7_aed2748d98c5 #Modifiers(mwbf5cb039_b830_4282_aa22_a3dda6272ec1)
	mw584a64d0_560a_4297_9882_80cb4eff73f3: Raf1(Raf1activemod~0,mek,pase,pmod~0,ras) + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) <-> Raf1(Raf1activemod~0,mek,pase,pmod~0,ras!7).Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1!7,ras_gap) r35_mw9f1dbbe6_8aa3_4180_bcea_04343649d7ba,r35_mwdf20ff60_f0b7_4c2a_b393_586ec1337e67 #Modifiers(mw66ac98c4_7e7b_4071_954d_43eb17584220, mwa54a9c38_c98b_45e5_8432_4119fb777e44, mw83de7813_4941_45a6_a320_a551165bf22a)
	mw42c97708_4f85_45a8_9141_d0ae529409ca: Raf1(Raf1activemod~0,mek,pase,pmod~0,ras!7).Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1!7,ras_gap) -> Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) + Ras(Ras_GDPmod~0,Ras_GTPmod~Ras_GTP,egfr,raf1,ras_gap) r36_mw91f2ca92_9556_4fb8_ae12_0b72f3e3f261 #Modifiers(mw83de7813_4941_45a6_a320_a551165bf22a)
	mwaa65a34e_fabf_4d6d_ae0b_f1d08b068f33: Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) + MEK(erk,pase,pmod~0,raf1) <-> Raf1(Raf1activemod~Raf1active,mek!8,pase,pmod~0,ras).MEK(erk,pase,pmod~0,raf1!8) r37_mw77c60377_28ae_4aad_b911_5768fc8b824f,r37_mw2eed2db0_ba78_435b_b2c8_ee91efdba1b4 #Modifiers(mwaff92910_ed3d_40b9_a29c_e4866167e828, mw0834731b_0477_4217_a53b_30cef851191b, mw4628f984_eb87_4922_9760_4975095ce6eb)
	mw1bd186cf_4762_480a_b70d_d7a775462398: Raf1(Raf1activemod~Raf1active,mek!8,pase,pmod~0,ras).MEK(erk,pase,pmod~0,raf1!8) -> Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) + MEK(erk,pase,pmod~P,raf1) r38_mw7e974605_8d9c_4250_8f69_072aab1f24f7 #Modifiers(mw4628f984_eb87_4922_9760_4975095ce6eb)
	mwf5573ddf_ad7f_478a_a784_557a9cddaaf2: Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) + MEK(erk,pase,pmod~P,raf1) <-> Raf1(Raf1activemod~Raf1active,mek!8,pase,pmod~0,ras).MEK(erk,pase,pmod~P,raf1!8) r39_mw11cdaca9_941c_4a59_ba2a_3bfeafb65aeb,r39_mw58c37b3e_91e7_445e_846e_77cd0b2320af #Modifiers(mwaff92910_ed3d_40b9_a29c_e4866167e828, mw9b25f809_18a1_4c14_8f4b_cf18e6d93c28, mw12ba4000_d452_420c_be63_96d2848aca32)
	mwb49058ff_2997_4187_abe7_4dce4ccf6ff4: Raf1(Raf1activemod~Raf1active,mek!8,pase,pmod~0,ras).MEK(erk,pase,pmod~P,raf1!8) -> Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) + MEK(erk,pase,pmod~PP,raf1) r40_mw432640ec_11b9_484d_ba26_415538ab9a10 #Modifiers(mw12ba4000_d452_420c_be63_96d2848aca32)
	mw8301b154_9463_4516_b4c5_c8f8b68691fe: MEK(erk,pase,pmod~PP,raf1) + ERK(egfr,mek,pase3,pmod~0) <-> ERK(egfr,mek!11,pase3,pmod~0).MEK(erk!11,pase,pmod~PP,raf1) r41_mw11bb74b8_d908_46f0_ac4d_06e8dd1aa5ae,r41_mwb44117f5_20b2_495e_adf3_3467cd119fd6 #Modifiers(mwf816df4c_4593_4d23_990f_0d7c15ddde5d, mw7e23b961_186b_47a0_a8b5_5e9957766792, mwcedf8ecd_67bd_4b91_aa04_d58782dec2a4)
	mwf95f743d_6108_49fe_8ffd_bdcc1a9f9a8d: ERK(egfr,mek!11,pase3,pmod~0).MEK(erk!11,pase,pmod~PP,raf1) -> MEK(erk,pase,pmod~PP,raf1) + ERK(egfr,mek,pase3,pmod~P) r42_mwa4c71b8d_fb74_465b_b76e_cec4e4c95484 #Modifiers(mwcedf8ecd_67bd_4b91_aa04_d58782dec2a4)
	mw51d9d6b8_f0c0_4763_9d11_9be61b5cf5c9: MEK(erk,pase,pmod~PP,raf1) + ERK(egfr,mek,pase3,pmod~P) <-> MEK(erk!11,pase,pmod~PP,raf1).ERK(egfr,mek!11,pase3,pmod~P) r43_mwc40b3165_cc16_4f78_86b5_e34f2731dcbb,r43_mw8bff2fe0_b582_4020_8f05_83f14451b1c0 #Modifiers(mwf816df4c_4593_4d23_990f_0d7c15ddde5d, mwcc894c94_0ddf_42cc_913e_cdcc4d471d94, mw6cb74b27_ffef_49bb_8ffb_622d552caa9e)
	mw6fd24d16_f57d_46c6_82f5_3f00759fa16b: MEK(erk!11,pase,pmod~PP,raf1).ERK(egfr,mek!11,pase3,pmod~P) -> MEK(erk,pase,pmod~PP,raf1) + ERK(egfr,mek,pase3,pmod~PP) r44_mw3d07dc22_f821_49a5_9712_820ba9592353 #Modifiers(mw6cb74b27_ffef_49bb_8ffb_622d552caa9e)
	mw9c208e18_c70d_4231_af0b_ad17cd0bba2d: Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) + Pase(_2mod~0,mek,raf1) <-> Raf1(Raf1activemod~Raf1active,mek,pase!10,pmod~0,ras).Pase(_2mod~0,mek,raf1!10) r45_mwa8f70790_9f44_4548_988e_49d13016d2f1,r45_mwaad540b6_783e_4576_8862_ad522fd897db #Modifiers(mwaff92910_ed3d_40b9_a29c_e4866167e828, mwbaaeb210_4806_4076_9d60_219f4ed945b6, mw19a33ad5_5ba4_46c7_84eb_c1287f02bcd5)
	mw87711dc1_43d7_40fc_b9e9_a24e2f92419d: Raf1(Raf1activemod~Raf1active,mek,pase!10,pmod~0,ras).Pase(_2mod~0,mek,raf1!10) -> Raf1(Raf1activemod~0,mek,pase,pmod~0,ras) + Pase(_2mod~0,mek,raf1) r46_mwfbc395b5_05b8_4e27_9696_c3ba52edaf74 #Modifiers(mw19a33ad5_5ba4_46c7_84eb_c1287f02bcd5)
	mw4b445876_bdce_42d0_867b_fd3c74128a6b: MEK(erk,pase,pmod~PP,raf1) + Pase(_2mod~2,mek,raf1) <-> MEK(erk,pase!14,pmod~PP,raf1).Pase(_2mod~2,mek!14,raf1) r47_mwc489f472_68ce_44e7_aad1_f8d2f6dda4ff,r47_mw56f1bdc0_66fd_47c0_806a_beeaf123e2f2 #Modifiers(mwf816df4c_4593_4d23_990f_0d7c15ddde5d, mwf9e2a044_7774_400b_a74e_a111b4a21f30, mwcb572fe2_c3ac_40e7_8141_da7d55fce18a)
	mw40950d59_1012_4361_8418_73e25758e367: MEK(erk,pase!14,pmod~PP,raf1).Pase(_2mod~2,mek!14,raf1) -> MEK(erk,pase,pmod~P,raf1) + Pase(_2mod~2,mek,raf1) r48_mwa17c895f_29d8_4977_a99f_cf9bf6216785 #Modifiers(mwcb572fe2_c3ac_40e7_8141_da7d55fce18a)
	mwbfa79c95_487d_4c6f_b437_9e579451a419: MEK(erk,pase,pmod~P,raf1) + Pase(_2mod~2,mek,raf1) <-> MEK(erk,pase!14,pmod~P,raf1).Pase(_2mod~2,mek!14,raf1) r49_mwafd23622_952d_44b3_a437_4aa12422add7,r49_mw9d9a7d08_b19a_44f1_a806_151597049345 #Modifiers(mw9b25f809_18a1_4c14_8f4b_cf18e6d93c28, mwf9e2a044_7774_400b_a74e_a111b4a21f30, mwa0acc0ac_5fac_4a42_a3be_e36db44994b0)
	mwa4b69c77_6226_46da_b78c_3e6027d0be41: MEK(erk,pase!14,pmod~P,raf1).Pase(_2mod~2,mek!14,raf1) -> MEK(erk,pase,pmod~0,raf1) + Pase(_2mod~2,mek,raf1) r50_mwac85fd83_4e73_43f1_9c42_01773349d50f #Modifiers(mwa0acc0ac_5fac_4a42_a3be_e36db44994b0)
	mwf8bb22e2_5aa3_4c25_a022_a266b1856a48: ERK(egfr,mek,pase3,pmod~PP) + Pase3(erk) <-> ERK(egfr,mek,pase3!6,pmod~PP).Pase3(erk!6) r51_mwd23d026b_c5b7_4742_aab9_b9beb18ec9bc,r51_mwf4c4d7a7_1498_4f6c_9d72_cd5cb012146c #Modifiers(mwd784228d_0cb5_468a_ac70_02d8f04b3d9c, mwd087f76b_65dc_47f1_ba21_c43774457686, mwa7e3103a_6394_472c_b0f4_8ed527f68604)
	mw61305f93_7b2d_4a2d_8d16_f7be026d8671: ERK(egfr,mek,pase3!6,pmod~PP).Pase3(erk!6) -> ERK(egfr,mek,pase3,pmod~P) + Pase3(erk) r52_mwe3e5abe4_9f92_43eb_92e4_cea771f5bf14 #Modifiers(mwa7e3103a_6394_472c_b0f4_8ed527f68604)
	mwcc31b497_6c50_446c_bbc2_6c5739507252: ERK(egfr,mek,pase3!6,pmod~P).Pase3(erk!6) -> ERK(egfr,mek,pase3,pmod~0) + Pase3(erk) r53_mwa617804d_95cc_4197_a39b_264a2c66b5a3 #Modifiers(mw35f5adaa_d1c0_433c_817d_76e317f4cb15)
	mw1d8c2435_bb85_4352_a25f_82033250579e: ERK(egfr,mek,pase3,pmod~P) + Pase3(erk) <-> ERK(egfr,mek,pase3!6,pmod~P).Pase3(erk!6) r54_mw254868f8_c9fb_493c_bc1d_807cc83c18e6,r54_mw78a41659_4abc_4614_9e83_38cbfe1c5262 #Modifiers(mwcc894c94_0ddf_42cc_913e_cdcc4d471d94, mwd087f76b_65dc_47f1_ba21_c43774457686, mw35f5adaa_d1c0_433c_817d_76e317f4cb15)
	mw8dec1159_1925_45d9_af25_3cb709a5017c: ERK(egfr,mek,pase3,pmod~PP) + EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk!34,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).ERK(egfr!34,mek,pase3,pmod~PP).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r55_mwbc2119ce_ade3_4e2a_a3bc_a29cd77adf72,r55_mw54b0e5e9_710f_438e_a8d3_749c594667bc #Modifiers(mwd784228d_0cb5_468a_ac70_02d8f04b3d9c, mwfbda4e09_0cbb_49bc_ae69_f88b7a79ed21, mw5babe3d5_a9af_4dfd_ac01_35474ef64af2)
	mwcf9f1b1d_e19a_4fa8_85ba_8f17e2cec730: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk!34,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).ERK(egfr!34,mek,pase3,pmod~PP).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> ERK(egfr,mek,pase3,pmod~PP) + EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Shc(egfr,pmod~P,shp) + Grb2(egfr,sos) + SOS(grb2,pmod~P) r56_mw1ddaf9f4_dcab_4dc2_a6fa_5ce85b9d7a3a #Modifiers(mw5babe3d5_a9af_4dfd_ac01_35474ef64af2)
	mwa5c135b4_77e2_4411_98e1_2000c39d4b30: ERK(egfr,mek,pase3,pmod~PP) + EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk!34,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).ERK(egfr!34,mek,pase3,pmod~PP).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) r57_mw60892818_7ef4_4f65_8003_9700a708c66c,r57_mw6843d346_6e9f_43d5_97f6_1059f164aa16 #Modifiers(mwd784228d_0cb5_468a_ac70_02d8f04b3d9c, mwf8cc7834_bf4f_4ccd_8235_d0890badf0f6, mw31261227_9cd6_4059_a0bb_04dbf4888080)
	mw4685274a_2b55_429f_927f_3fd863592af6: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk!34,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).ERK(egfr!34,mek,pase3,pmod~PP).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> ERK(egfr,mek,pase3,pmod~PP) + EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + Grb2(egfr,sos) + SOS(grb2,pmod~P) r58_mwdaa378da_64fe_4ea4_b79d_c25733837b9f #Modifiers(mw31261227_9cd6_4059_a0bb_04dbf4888080)
	mw8e331e43_16b4_478d_880b_d5a3244540e4: SOS(grb2,pmod~P) -> SOS(grb2,pmod~0) r59_mw3f5e2165_9bb6_4ac3_992e_50943dd2ea05 #Modifiers(mw31ac308f_da36_4f73_830f_67f3e5b945d9)
	mw47dee769_daa0_4af4_978a_5ab17e504c2f: EGFR(Promod~PRO,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) -> EGFR(Promod~0,cbl,egf,egfr,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3) r60_mwe49ede89_014e_40f2_acfd_0d1a0cd11fe7 #Modifiers(mw0a0ca6ba_cb28_44c7_a0c0_1593cb720966)
	mwbd8a133e_1b70_44e8_bef8_78b14141166b: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + cbl(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) r61_mw90873203_7a5d_4fca_a789_5e989ff0c999,r61_mw92d81b3b_fa59_4637_8540_8cb8482490d9 #Modifiers(mwfbda4e09_0cbb_49bc_ae69_f88b7a79ed21, mw19122f7d_f92e_4dc0_922f_6b681db65b0b, mwb1bc2058_e6d8_4680_9e6c_d27bb366cde0)
	mw3a87ca5a_845d_4ac4_8806_e343cbbfc630: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) + EPn(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) r62_mwcc2a950d_261b_4fd7_9c08_9f3c194ba09d,r62_mw1351daea_68be_404a_b7b0_105920ff3371 #Modifiers(mwb1bc2058_e6d8_4680_9e6c_d27bb366cde0, mwb2366216_0b3c_4f28_8303_fec92c68dd57, mw06b8aada_c92a_48eb_8ee7_af3778cfe62f)
	mw363a5271_1f51_4d5e_87a7_42ea25cb5657: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2!30,pi3k,ras,ras_gap,shc!26,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).Shc(egfr!26,pmod~P,shp).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) -> cbl(egfr) + SOS(grb2!2,pmod~0).Grb2(egfr,sos!2) + EPn(egfr) + Shc(egfr,pmod~P,shp) r63_mwc6b3c76f_af7b_488c_8751_28f1d9ab90a1 #Modifiers(mw06b8aada_c92a_48eb_8ee7_af3778cfe62f)
	mw6bee0112_92dc_4169_9109_2633772b3aa4: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + cbl(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) r64_mwf9c81339_e73a_45b5_a714_0854b718d44f,r64_mw587125c7_6092_4627_9cdd_2415b77a8307 #Modifiers(mwf8cc7834_bf4f_4ccd_8235_d0890badf0f6, mw19122f7d_f92e_4dc0_922f_6b681db65b0b, mw481cd12b_61ba_44e5_93bf_8b88c6c4a4e7)
	mwbac9e6ff_2df1_45eb_b3f4_4cae74c64014: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) + EPn(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) r65_mwa575cf96_3d57_4222_ac71_bd17006ef035,r65_mwf7658bc6_acb6_411e_ae2c_9d8de7738d5f #Modifiers(mw481cd12b_61ba_44e5_93bf_8b88c6c4a4e7, mwb2366216_0b3c_4f28_8303_fec92c68dd57, mw1d5948e7_5504_4224_9d71_227911b4f1ee)
	mweb93165f_cf03_48f1_b035_59d79e324314: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2!30,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).SOS(grb2!2,pmod~0).Grb2(egfr!30,sos!2).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) -> cbl(egfr) + SOS(grb2!2,pmod~0).Grb2(egfr,sos!2) + EPn(egfr) r66_mwa137184a_0eb0_4bcb_971c_8e19231b2c07 #Modifiers(mw1d5948e7_5504_4224_9d71_227911b4f1ee)
	mw85e457d1_73f8_4236_bb61_a128d300003f: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + cbl(egfr) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl!20,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!20) (r67_mwfa680314_051c_4b10_afc9_7e7fbee49e3f)/2,r67_mw97b9ab43_02ae_4e42_a524_6b781633a255 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw19122f7d_f92e_4dc0_922f_6b681db65b0b, mwec1b368b_8f73_47eb_9636_9956389836eb)
	mw6b159c8f_eee0_4337_b711_2e230c9e2cf6: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl!20,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!20) + EPn(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) r68_mwcc0d3fcd_9b9e_4390_b588_e57b57d89d22,r68_mw56f1be7e_e303_4a72_be17_5bd08e3eb1f2 #Modifiers(mwec1b368b_8f73_47eb_9636_9956389836eb, mwb2366216_0b3c_4f28_8303_fec92c68dd57, mwa455ec7e_1a12_4659_95a2_a5695d09ca60)
	mwc9b3b248_3290_452a_9b7c_8fdada3e6687: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) -> cbl(egfr) + EPn(egfr) r69_mw1decb177_5075_41f3_a348_ca13b8f4497e #Modifiers(mwa455ec7e_1a12_4659_95a2_a5695d09ca60)
	mw77484632_4e33_468a_9937_24e9bfd0e17d: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + PI3K(egfr,pip3,pmod~0,tp4) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) (r70_mw001b8124_b461_482a_8c8e_30bffc6718f7)/2,r70_mw40eca7d6_80b2_4926_9c2f_330422db0814 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw2ba1db9a_4483_44fa_a3a2_b4a5ea66898c, mw0dc4e5eb_4366_4799_bebc_cfcffe5c06f5)
	mw2c5858f3_0988_49b0_a94a_057853b84e91: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~PP).EGF(egfr!18,pmod~0) r71_mwf3d00ca5_89dc_4693_92ec_a47db8150144,r71_mw91a84697_3231_4fa6_b6ff_d69ee86056dc #Modifiers(mw0dc4e5eb_4366_4799_bebc_cfcffe5c06f5, mw1e591998_65c0_484e_8a3b_537a38d94de1)
	mwd3a36af9_3ccc_4bb1_9867_3b9823ba4ac8: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + PI3K(egfr,pip3,pmod~P,tp4) r72_mw901b5284_bdae_4040_b77d_10f1ec267f06,(r72_mw94cadd24_0432_4f89_a6fc_96cb0475c44e)/2 #Modifiers(mw0dc4e5eb_4366_4799_bebc_cfcffe5c06f5, mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw78e207c4_4faf_4b48_8e22_1ee666e9cc4c)
	mw9f000f29_2512_4d4a_9dd9_e59aaf296d31: TP4(pi3k) + PI3K(egfr,pip3,pmod~P,tp4) <-> PI3K(egfr,pip3,pmod~P,tp4!4).TP4(pi3k!4) r73_mw688106ee_719d_4995_b1a0_faeefdb0af5a,r73_mw85c8ff7d_8d7c_4403_8a58_4996a3e6ac28 #Modifiers(mwfc4a9c3d_3ebb_4033_8b7d_f4d7613d2078, mw78e207c4_4faf_4b48_8e22_1ee666e9cc4c, mwbd6bb050_89bd_41df_8cea_d2e1fb77bafe)
	mw837b5ad7_4a8c_4c55_94ff_0fdd63048044: PI3K(egfr,pip3,pmod~P,tp4!4).TP4(pi3k!4) -> PI3K(egfr,pip3,pmod~0,tp4!4).TP4(pi3k!4) r74_mw4f6f44d9_408e_49b2_bedf_d34b2448725e #Modifiers(mwbd6bb050_89bd_41df_8cea_d2e1fb77bafe)
	mwd15926b3_069a_4b16_a6fc_c0c15083d621: PI3K(egfr,pip3,pmod~0,tp4!4).TP4(pi3k!4) <-> TP4(pi3k) + PI3K(egfr,pip3,pmod~0,tp4) r75_mwd3e2533f_8d57_407c_834d_e0dde30b7f4a,r75_mwbd416b7b_f9b6_4464_b9e8_be4ac001d13d #Modifiers(mw7033dfd6_53c5_433b_a132_f8cb34dea20f, mwfc4a9c3d_3ebb_4033_8b7d_f4d7613d2078, mw2ba1db9a_4483_44fa_a3a2_b4a5ea66898c)
	mw3a5e0932_d50f_4fe6_b8cb_0ad649f305b0: PI3K(egfr,pip3,pmod~P,tp4) + PIP3(_2mod~2,akt,pi3k) <-> PI3K(egfr,pip3!13,pmod~P,tp4).PIP3(_2mod~2,akt,pi3k!13) r76_mw64664eb9_353a_4f1d_a8dc_e22bcb06e2c2,r76_mw0573df9d_f365_40b7_83d4_3846a05aefdc #Modifiers(mw78e207c4_4faf_4b48_8e22_1ee666e9cc4c, mwb561d9f3_a9ed_4bdb_8d40_87be5cc3237a, mw014cc419_b720_4b90_9192_2ec6e706c87d)
	mw5dcc8719_3180_4bd0_8797_08e256131961: PI3K(egfr,pip3!13,pmod~P,tp4).PIP3(_2mod~2,akt,pi3k!13) -> PI3K(egfr,pip3,pmod~P,tp4) + PIP3(_2mod~0,akt,pi3k) r77_mw134431c3_e8e5_4375_89a0_2c51a03d65dd #Modifiers(mw014cc419_b720_4b90_9192_2ec6e706c87d)
	mw376b0685_ef73_4fcc_94af_2ada24cf8a8b: Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt) + PIP3(_2mod~0,akt,pi3k) <-> Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k) r78_mw22510791_ef7e_4373_907c_9eecbc8adda7,r78_mwf59d397b_cfee_4a84_9279_134cc951db8c #Modifiers(mwcef73e0e_d195_4077_ae71_723664ee1602, mwd7f41594_8377_4e2e_9528_45d5a82ffdb4, mw62bf5275_ce02_4e86_b3b6_3f87a335e1de)
	mwcc7cfa9c_4945_403a_938e_b237c371a5ef: Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k) + PDK1(akt) <-> Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) r79_mwe2aded94_f2b5_4513_8670_71a86abf7968,r79_mw8d6eacb6_7184_4564_8cde_53e93add2146 #Modifiers(mw62bf5275_ce02_4e86_b3b6_3f87a335e1de, mw6e01967b_3e2a_433d_bec6_9f9cf3ba243c, mw6353aa36_d4a4_4254_8a1f_1f7f571d4233)
	mw98da32e0_b061_40c5_9d32_40744134f3fa: Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) -> Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) r80_mw3c3648cb_6d56_4d9d_be47_129483778fd6 #Modifiers(mw6353aa36_d4a4_4254_8a1f_1f7f571d4233)
	mw31369230_1f14_45bd_be02_a44a275c6e31: Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) <-> Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k) + PDK1(akt) r81_mw98405e53_330b_4a64_a700_a62bb3f21426,r81_mw11f8de84_6639_486d_bf17_8f7021f54b66 #Modifiers(mwc1935afc_56b1_4a87_923c_ae6d82455d80, mw3d81860d_d786_4fcc_b8bb_64f1a2d7739d, mw6e01967b_3e2a_433d_bec6_9f9cf3ba243c)
	mw12311a84_3f8d_40c6_8b14_961a8a58d1b6: Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k) <-> Akt(pAkt_totalmod~0,pdk1,pip3,pmod~P,takt) + PIP3(_2mod~0,akt,pi3k) r82_mw65e1222f_39ad_4a29_ae76_04b7d591af38,r82_mw11e520e6_b1f1_4802_af71_92a2bd9cb644 #Modifiers(mw3d81860d_d786_4fcc_b8bb_64f1a2d7739d, mw16796ffe_4764_4a9f_942e_149f42c1cd28, mwd7f41594_8377_4e2e_9528_45d5a82ffdb4)
	mwf3d393e9_ae09_4eab_a39a_ed0eef0f54bc: Akt(pAkt_totalmod~0,pdk1,pip3,pmod~P,takt!1).Takt(akt!1) -> Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt!1).Takt(akt!1) r83_mw6a4e035b_11a7_4155_9a78_cfba13631cb1 #Modifiers(mwa6e82fc9_a0ce_461c_93c8_17f3c807c1a1)
	mw2698f402_d00b_451e_8b22_93a322fe9a92: Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt!1).Takt(akt!1) <-> Akt(pAkt_totalmod~0,pdk1,pip3,pmod~0,takt) + Takt(akt) r84_mw6eebbe41_cf28_46e8_930c_26f50e08d602,r84_mw751c2663_d807_482f_991b_c8032cb6d996 #Modifiers(mw236a3250_4c96_4f6e_b94c_ab3d12852801, mwcef73e0e_d195_4077_ae71_723664ee1602, mw11a8b702_b8ac_4513_b4aa_063e51089812)
	mw028e8b3e_b531_4466_9c3a_e3fcf7fc9be9: Akt(pAkt_totalmod~0,pdk1,pip3,pmod~P,takt) + Takt(akt) <-> Akt(pAkt_totalmod~0,pdk1,pip3,pmod~P,takt!1).Takt(akt!1) r85_mwd2d0b340_bbdb_40bd_9eac_992a2a402b94,r85_mwb1b46773_a218_4f99_a000_a98fbc1275d7 #Modifiers(mw16796ffe_4764_4a9f_942e_149f42c1cd28, mw11a8b702_b8ac_4513_b4aa_063e51089812, mwa6e82fc9_a0ce_461c_93c8_17f3c807c1a1)
	mwc5e0c166_6a3a_4913_9ed1_dafe97bdb371: Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k) + Takt(akt) <-> Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1) r86_mw193f2553_1ab3_4b07_9b4b_201ee9e08c96,r86_mwb7292ff5_dd13_41aa_b9b8_2c0c75d35fb1 #Modifiers(mw3d81860d_d786_4fcc_b8bb_64f1a2d7739d, mw11a8b702_b8ac_4513_b4aa_063e51089812, mw1a0cb97a_b657_430b_963c_92217f643081)
	mw94b3bae0_4da9_4358_a5ac_a46a5cbf621b: Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~P,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1) -> Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1) r87_mwf4069175_b898_4633_ac1e_20f44431c36a #Modifiers(mw1a0cb97a_b657_430b_963c_92217f643081)
	mw362ca1b3_224a_42fb_a14b_6ff467748a5e: Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1) <-> Akt(pAkt_totalmod~0,pdk1,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k) + Takt(akt) r88_mw6d852e8c_c64a_4926_80c4_781a9c04b20e,r88_mw4d614bfc_3e20_450e_8890_6326afd0a0d7 #Modifiers(mw9b937ca3_0d82_46d5_8f5a_0f9701002797, mw62bf5275_ce02_4e86_b3b6_3f87a335e1de, mw11a8b702_b8ac_4513_b4aa_063e51089812)
	mw3994e898_7232_4b70_9c58_b3476e8655f5: Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) + Takt(akt) <-> Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1).PDK1(akt!12) r89_mw3676a900_b098_4a74_a511_e15984ca0cd2,r89_mwf68a0726_94b5_4be1_933f_1ac48053601d #Modifiers(mwc1935afc_56b1_4a87_923c_ae6d82455d80, mw11a8b702_b8ac_4513_b4aa_063e51089812, mw57a44eb0_ace7_4294_905a_219e87d3c281)
	mw75acd2d1_3fdf_4c3f_8d99_6d62f825d5e2: Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~P,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1).PDK1(akt!12) -> Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1).PDK1(akt!12) r90_mwb4f0353c_d140_44cc_ab75_566fcc2909c5 #Modifiers(mw57a44eb0_ace7_4294_905a_219e87d3c281)
	mw4a334f7d_9bce_4690_b623_a427ed66a174: Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt!1).PIP3(_2mod~0,akt!0,pi3k).Takt(akt!1).PDK1(akt!12) <-> Akt(pAkt_totalmod~0,pdk1!12,pip3!0,pmod~0,takt).PIP3(_2mod~0,akt!0,pi3k).PDK1(akt!12) + Takt(akt) r91_mw6165953d_ce44_4b21_a18a_c401c04993f1,r91_mw99a30aef_212a_4577_bcfd_8c5764057cca #Modifiers(mwd746a5d5_5e65_4a4c_9f84_0e4a3cb7d2fc, mw6353aa36_d4a4_4254_8a1f_1f7f571d4233, mw11a8b702_b8ac_4513_b4aa_063e51089812)
	mw950485f2_4463_4309_a4e4_cc81d16ffb7f: Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) -> Raf1(Raf1activemod~Raf1active,mek,pase,pmod~P,ras) functionRate91() #Modifiers(mwa6994523_5d45_4000_af0c_3e94073bf183, mwa6994523_5d45_4000_af0c_3e94073bf183, mwaff92910_ed3d_40b9_a29c_e4866167e828)
	mw62f71309_e066_47d2_9b99_01f78a51c218: Raf1(Raf1activemod~Raf1active,mek,pase,pmod~P,ras) -> Raf1(Raf1activemod~Raf1active,mek,pase,pmod~0,ras) r93_mw0cea56f3_1cdb_410e_a5a4_f3635ba5c94b #Modifiers(mwdf92bdc0_f426_45b0_9ad0_876521f41312)
	mwe8647e48_f4a9_40f4_9b32_f89ded572e01: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) (r94_mw50a0e884_a88c_46a7_b985_788868bc1029)/2,r94_mw2c88e0e2_e9c3_4e4c_bb2e_b0cd1f6420f4 #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mw13abe2a6_9905_40e5_8c23_3fc8834b572a, mw2fd710a6_7fe2_4484_bca6_59c187bade8b)
	mw65b9e026_bc6c_4c94_8b37_8b9acdf50c8a: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) -> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) r95_mw95e2190d_8e39_419b_ad26_7cc141f7b87b #Modifiers(mw2fd710a6_7fe2_4484_bca6_59c187bade8b)
	mw1c9d29fa_bff4_4d2f_9d5f_f1791e4882a3: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) <-> EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~P,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) (r96_mw76d68ace_272d_4178_bba2_74dfdf260c70)/2,r96_mwe37b936f_7781_4a01_b59b_96bd7db0c49e #Modifiers(mwbfcf6773_1915_432c_b1d2_1f246094cc74, mwb6a9aa2c_62e7_410f_9c33_dbe36dfcc4af, mw341082a0_8017_4cc7_9d00_b1211a196072)
	mwad97bd5a_3dae_49d9_990b_2e6574740618: STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) + PP1(stat3) <-> STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1!15,pp2,stat3).PP1(stat3!15) r97_mwb6701ead_d3f2_4eb3_8b08_341cea49a4b2,r97_mwa5016035_3f9f_44fc_9f69_1d7a0155eb36 #Modifiers(mwb6a9aa2c_62e7_410f_9c33_dbe36dfcc4af, mwcea1f1c1_2f85_4af1_98ea_ef14cf580c09, mwdc34472c_a6f9_4002_951d_e0e8da64eb42)
	mwe9988e4a_083c_4f8e_b154_3e599c9307b0: STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1!15,pp2,stat3).PP1(stat3!15) -> STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) + PP1(stat3) r98_mw26164d03_adda_4a21_b5ac_59e1d5a8d8ab #Modifiers(mwdc34472c_a6f9_4002_951d_e0e8da64eb42)
	mwf8bacf1a_6c1a_49b6_b344_2d3bd404a735: STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) + STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) <-> STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17) r99_mw9fe16c2b_7271_4e4f_b6de_c149721a3198 * 2,r99_mw74ea5b55_ead0_4b6f_8da0_fd1dcf7e231d #Modifiers(mwb6a9aa2c_62e7_410f_9c33_dbe36dfcc4af, mw4f575c55_7dff_45d7_94ad_cda9621d5b63)
	mwc9b945cf_3a14_4bd9_b253_7064498c75e2: STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17) + PP1(stat3) <-> STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1!15,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).PP1(stat3!15) (r100_mw8cbe6595_6f16_4704_afe2_0dd043a175fa)/2,r100_mw21d22acd_ddd4_4794_9700_52201984f75b #Modifiers(mw4f575c55_7dff_45d7_94ad_cda9621d5b63, mwcea1f1c1_2f85_4af1_98ea_ef14cf580c09, mw472d5cb9_120e_4f60_bbae_1ae2552837dd)
	mw75c6078f_fb76_4ca9_9fdd_e221e3ba57ad: STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1!15,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).PP1(stat3!15) -> STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3!17) + PP1(stat3) r101_mw81384973_14a0_4498_ab21_f70666d46d7f #Modifiers(mw472d5cb9_120e_4f60_bbae_1ae2552837dd)
	mw177fa7b0_f0be_4c3e_8b47_2ac4e13159a2: STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) + STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3) <-> STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3!17) r102_mw9f1a7f64_0b37_42df_9dd5_e1a44efdcbba,(r102_mw366e6f17_4081_4cdc_9fa5_0aeb354d692c)/2 #Modifiers(mw13abe2a6_9905_40e5_8c23_3fc8834b572a, mwb6a9aa2c_62e7_410f_9c33_dbe36dfcc4af, mwd2c465fb_eea7_499a_8ea4_f318a64cb9ee)
	mwec4127b5_6bcf_4128_aff4_a6b3c470f690: STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~C,egfr,nmod~0,pmod~P,pp1,pp2,stat3!17) -> STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17) r103_mw1df2caba_8e41_4fe5_a1b5_7777eb98ed1c #Modifiers(mw4f575c55_7dff_45d7_94ad_cda9621d5b63)
	mw5c806b00_59a1_491e_99a1_2c932b2d5d7a: STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3) + STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3) <-> STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17) r104_mw5a798f7a_b4eb_4a27_b413_4ff3956b90e9 * 2,r104_mw54178365_18c1_47e0_94ee_6b96582c52ef #Modifiers(mwe3fd7f65_b0d1_44d9_b6f3_d2f7d332f664, mw4110f531_7513_4786_8896_7c9d969ff558)
	mw26fdabae_323b_4a78_b134_4c2eb70ea6a7: STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17) + PP2(stat3) <-> STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2!16,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).PP2(stat3!16) (r105_mw1ff4e75e_fce5_4a7a_907b_05df4981f80b)/2,r105_mw8b269d52_eda9_4dd1_8616_ebcf29c971fa #Modifiers(mw4110f531_7513_4786_8896_7c9d969ff558, mw0e1be972_fded_4bff_a93d_091ec942485f, mw0facb8f2_95cf_4ddf_a959_b24ba64f320b)
	mw3b0c171c_6d60_41ca_8193_83cd5e6c188c: STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2!16,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3!17).PP2(stat3!16) -> STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3!17) + PP2(stat3) r106_mw90b25c4b_ad1a_4ee5_ae20_c60451484516 #Modifiers(mw0facb8f2_95cf_4ddf_a959_b24ba64f320b)
	mwc38a99c8_74cf_49f2_a16b_f6610ca1a0a7: STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3) + STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3) <-> STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3!17).STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3!17) r107_mwa0806e7a_a90d_4187_9c37_6d9ea569a447,(r107_mw95cb9071_56e2_447d_b7c7_59ac96baa623)/2 #Modifiers(mw960bddeb_e567_46dd_b2f3_ed5e6a5c7972, mwe3fd7f65_b0d1_44d9_b6f3_d2f7d332f664, mw9686f53e_d343_45fd_b441_9c992219546a)
	mw45d92b79_0656_4795_87d0_7a465949ca43: STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2,stat3) + PP2(stat3) <-> STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2!16,stat3).PP2(stat3!16) r108_mwba545ecf_c7d4_4a6c_8c47_9e91f052d5a9,r108_mw01c5ceef_57a1_4baa_b2cd_fd39e9588a10 #Modifiers(mwe3fd7f65_b0d1_44d9_b6f3_d2f7d332f664, mw0e1be972_fded_4bff_a93d_091ec942485f, mw8c85ff7f_6368_4b11_a2ed_ce83481b55e6)
	mwb71945c2_03a8_4fad_a995_e1caeee98525: STAT3(cmod~0,egfr,nmod~N,pmod~P,pp1,pp2!16,stat3).PP2(stat3!16) -> STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3) + PP2(stat3) r109_mw7aba6db3_c7ec_4192_bb5e_0ac4b466c1a5 #Modifiers(mw8c85ff7f_6368_4b11_a2ed_ce83481b55e6)
	mwd189238c_e8f9_40be_b4ea_18a42bba1b4f: STAT3(cmod~0,egfr,nmod~N,pmod~0,pp1,pp2,stat3) -> STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) r110_mw31eb851a_c381_419d_b694_f158b7f5cfb6 #Modifiers(mw960bddeb_e567_46dd_b2f3_ed5e6a5c7972)
	mw52a97dfa_4e16_4604_98ec_72a9b405ad2d: PIP3(_2mod~0,akt,pi3k) -> PIP3(_2mod~2,akt,pi3k) r111_mwa5567196_f821_479b_973b_f0967a3eb761 #Modifiers(mwd7f41594_8377_4e2e_9528_45d5a82ffdb4)
	mw0fbf73ac_8427_4a8c_9b0e_c51676638be4: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + cbl(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) r112_mw693f22fe_7af9_4af8_a026_faace261163b,r112_mw4e34dd0b_2ef1_4805_ba4a_2c859bdcb5e2 #Modifiers(mw2fd710a6_7fe2_4484_bca6_59c187bade8b, mw19122f7d_f92e_4dc0_922f_6b681db65b0b, mw9da19d39_6d91_41d0_b101_f7748391705a)
	mw2146635b_dc09_44be_97f3_940933f38925: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) + EPn(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) r113_mw6ccc709f_7522_4378_9862_9182b326736f,r113_mw52cfcb04_5483_4dca_a06f_d1132baa2665 #Modifiers(mw9da19d39_6d91_41d0_b101_f7748391705a, mwb2366216_0b3c_4f28_8303_fec92c68dd57, mw741407c8_029b_44ed_9799_02eb9d90ec9a)
	mw3eaece15_c282_46e1_baad_ab56a5664619: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3!27).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).STAT3(cmod~C,egfr!27,nmod~0,pmod~0,pp1,pp2,stat3).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) -> STAT3(cmod~C,egfr,nmod~0,pmod~0,pp1,pp2,stat3) + cbl(egfr) + EPn(egfr) r114_mw74529c03_0e18_4c1b_8704_a9816a9ea3d0 #Modifiers(mw741407c8_029b_44ed_9799_02eb9d90ec9a)
	mw3cf723f4_c4fe_46e2_87e1_bab6a91d4583: EGFR(Promod~0,cbl,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0) + cbl(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) r115_mwe5304629_3bf5_4912_b431_190349f23010,r115_mw53f2f6aa_0608_4b23_bfe6_f27b10b55fe5 #Modifiers(mw0dc4e5eb_4366_4799_bebc_cfcffe5c06f5, mw19122f7d_f92e_4dc0_922f_6b681db65b0b, mwbedcc124_dbf3_41ab_989e_6b0900d7590a)
	mwd46c52b2_27ca_4fe0_9c59_04167b0db92a: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28) + EPn(egfr) <-> EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) r116_mwe6f05aa0_13b8_4d76_aaf0_680cc578302a,r116_mw7018cad1_4fc0_4bbe_aa44_7fa2e01b424c #Modifiers(mwbedcc124_dbf3_41ab_989e_6b0900d7590a, mwb2366216_0b3c_4f28_8303_fec92c68dd57, mw71d03aab_fcb6_4f78_a788_48f183d0b931)
	mw8453434c_1b7f_429e_8902_ca15dc0ba9e1: EGFR(Promod~0,cbl!28,egf!3,egfr!19,epn!29,erk,grb2,pi3k!23,ras,ras_gap,shc,shp,stat3).EGFR(Promod~0,cbl,egf!18,egfr!19,epn,erk,grb2,pi3k,ras,ras_gap,shc,shp,stat3).PI3K(egfr!23,pip3,pmod~0,tp4).EGF(egfr!3,pmod~P).EGF(egfr!18,pmod~0).cbl(egfr!28).EPn(egfr!29) -> PI3K(egfr,pip3,pmod~0,tp4) + EPn(egfr) r117_mwce8da2e5_1143_4235_805b_f7725e8473ec #Modifiers(mw71d03aab_fcb6_4f78_a788_48f183d0b931)
end reaction rules
end model
